PsychoPy2experiment version="2021.1.4"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=1D53F7C4
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1805, 1203]
  expName = mushroom_task
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Routines
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  Routine setupSamples
    CodeComponent set_up_samples
      Code Type = Both
      Begin JS Experiment:
        var trials_parameters;
      Begin JS Routine:
        if (startGame === 0) {
            trials_parameters = loop_prTrials;
            loop_prTrials._autoLog = false;
        } else if (startGame === 1) {
            trials_parameters = loop_trials;
            loop_trials._autoLog = false;
        }

        thisIndex = trials_parameters._snapshots[trial_index]["thisIndex"];
        nTotal = trials_parameters._trialList[thisIndex]["nTotal"];
        true_ratio = trials_parameters._trialList[thisIndex]["trueRatio"];
        given_ratio = trials_parameters._trialList[thisIndex]["givenRatio"];

        nSamples = 5;

        // create matrix that specifies the number of observations per sample
        nObservations = function () {
            var _pj_a = [], _pj_b = range(nSamples, 0);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var iSample = _pj_b[_pj_c];
                _pj_a.push(0);
            }
            return _pj_a;
        }
        .call(this);

        nLeft = nTotal;
        for (var iSample = 1, _pj_a = (nSamples + 1); (iSample < _pj_a); iSample += 1) {
            var xmin = ((- 1) * (((nSamples - iSample) * 9) - nLeft));
            xmin = Math.max(1, xmin);
            var xmax = ((- 1) * (((nSamples - iSample) * 1) - nLeft));
            xmax = Math.min(9, xmax);
            var x = randint(xmin, xmax + 1);
            nLeft = (nLeft - x);
            nObservations[(iSample - 1)] = x;
        }


        // Now create the randomized list with the actual observations to show
        nBlue = round((given_ratio * nTotal));
        seen_ratio = nBlue / nTotal;
        nRed = (nTotal - nBlue);
        itemList = ["blue", "red"];

        var repeat = (values, counts) => values.flatMap((v, i) => Array(counts[i]).fill(v)),
            itemList = repeat(itemList,[nBlue, nRed])
        shuffle(itemList);

        // Based on the shuffled list with 'red' and 'blue', define how many red's and blue's are in each sample.
        start = 0;
        blue = function () {
            var _pj_a = [], _pj_b = range(nSamples);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var iSample = _pj_b[_pj_c];
                _pj_a.push(0);
            }
            return _pj_a;
        }
        .call(this);

        red = function () {
            var _pj_a = [], _pj_b = range(nSamples);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var iSample = _pj_b[_pj_c];
                _pj_a.push(0);
            }
            return _pj_a;
        }
        .call(this);
        for (var iSample = 0, _pj_a = nSamples; (iSample < _pj_a); iSample += 1) {
            blue[iSample] = itemList.slice(start, (start + nObservations[iSample])).filter(element  => element == "blue").length
            red[iSample] = itemList.slice(start, (start + nObservations[iSample])).filter(element  => element == "red").length
            start = (start + nObservations[iSample]);
        }
      Begin Routine:
        # retrieved from file
        if startGame == 0:
            nTotal = thisLoop_prTrial['nTotal']
            true_ratio = thisLoop_prTrial['trueRatio']
            given_ratio = thisLoop_prTrial['givenRatio']
        elif startGame == 1:
            nTotal = thisLoop_trial['nTotal']
            true_ratio = thisLoop_trial['trueRatio']
            given_ratio = thisLoop_trial['givenRatio']
        nSamples = 5

        # create matrix that specifies the number of observations per sample
        nObservations = [0 for iSample in range(nSamples)]
        nLeft = nTotal
        for iSample in range(1,nSamples+1): # +1 to correct for 0-indexing in Python
            xmin = -1*((nSamples-iSample)*9-nLeft)  # nLeft-x <= (nSamples-iSample)x9, with 5 for number of total samples, 9 for max observations per sample in general.
            xmin = max(1,xmin) # xmin is either 1, or a higher minimum based on how many observations and samples still need to be shown
            xmax = -1*((nSamples-iSample)*1-nLeft) # nLeft-x >= (nSamples-iSample)x1, with 5 for number of total samples, 1 for min observations per sample in general.
            xmax = min(9,xmax) # xmax is either 9, or a lower maximum based on how many observations and samples still need to be shown
            toChooseFrom = [*range(xmin, xmax+1)] # +1 because python reads 'up to but not including xmax'
            x = sample(toChooseFrom,1)[0] # sample returns list; convert list to integer
            nLeft = nLeft - x
            nObservations[iSample-1] = x

        # Now create the randomized list with the actual observations to show
        nBlue = round(given_ratio * nTotal)
        seen_ratio = nBlue / nTotal
        nRed = nTotal - nBlue
        itemList = np.array(["blue", "red"])
        itemList = np.repeat(itemList, [nBlue, nRed])
        random.shuffle(itemList)

        # Based on the shuffled list with 'red' and 'blue', define how many red's and blue's are in each sample.
        start = 0
        blue = [0 for iSample in range(nSamples)]
        red = [0 for iSample in range(nSamples)]
        for iSample in range(nSamples):
          blue[iSample] = sum(itemList[start:(start+nObservations[iSample])]=="blue")
          red[iSample] = sum(itemList[start:(start+nObservations[iSample])]=="red")
          start = start + nObservations[iSample]
      End JS Routine:
        sample_index = 0;
      End Routine:
        sample_index = 0
  Routine crossHair
    TextComponent cross_hair
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = crosshair_ITI
      text = +
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        crosshair_ITI = Math.floor(((Math.random() * (2.1 - 1.5)) + 1.5)* 10) / 10;
        document.body.style.cursor='none';
      Begin Routine:
        crosshair_ITI = round(random.random() * (2.0 - 1.5) + 1.5, 1)
      End Routine:
        #win.getMovieFrame()
        #win.saveMovieFrames('crosshair.png')
  Routine mushroomSample
    TextComponent text_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        S = ["blue", "red"];
        var repeat = (values, counts) => values.flatMap((v, i) => Array(counts[i]).fill(v)),
            S = repeat(S,[blue[sample_index], red[sample_index]])

        ok = 0;
        while ((ok === 0)) {
            var coor_x = [];
            while(coor_x.length < nObservations[sample_index]){
                var r =((Math.random() * (aperture_size - (- aperture_size))) + (- aperture_size));
                if(coor_x.indexOf(r) === -1) coor_x.push(r);
            }
            var coor_y = [];
            while(coor_y.length < nObservations[sample_index]){
                var r =((Math.random() * (aperture_size - (- aperture_size))) + (- aperture_size));
                if(coor_y.indexOf(r) === -1) coor_y.push(r);
            }
            var diff_x = allAbsDifferences(coor_x, coor_x.length);
            var diff_y = allAbsDifferences(coor_y, coor_y.length);
            var match;
            var tooClose_xy = [];
            for(var el = 0; el < diff_x.length; el++) {
                match = 0;
                if (diff_x[el] <= (mushroom_size * 0.9) && diff_y[el] <= (mushroom_size * 0.9)) {
                    match = 1;
                }
                tooClose_xy.push(match);
            }
            if (tooClose_xy.every(x => x == 0)) {
                ok = 1;
            }
        }

        if ((red[sample_index] > 0)) {
            red_mushrooms = function () {
            var _pj_a = [], _pj_b = range(red[sample_index]);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(new visual.ImageStim({
                    win: psychoJS.window,
                    name: "red_mushrooms", image: "red_mushroom.png",
                    pos: [coor_x[i], coor_y[i]], size: [mushroom_size, mushroom_size],
                    }));
            }
            return _pj_a;
            }
            red_mushrooms = red_mushrooms();
            for (var i, _pj_c = 0, _pj_a = red_mushrooms, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                i.setAutoDraw(true);
            }
        }


        if ((blue[sample_index] > 0)) {
            blue_mushrooms = function () {
            var _pj_a = [], _pj_b = range(blue[sample_index], red[sample_index]);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(new visual.ImageStim({
                    win: psychoJS.window,
                    name: "blue_mushrooms", image: "blue_mushroom.png",
                    pos: [coor_x[i], coor_y[i]], size: [mushroom_size, mushroom_size],
                    }));
            }
            return _pj_a;
            }
            blue_mushrooms = blue_mushrooms();
            for (var i, _pj_c = 0, _pj_a = blue_mushrooms, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                i.draw();
            }
        }
      Begin Routine:
        # At the start of each sample, create a matrix with x and y coordinates of stimuli on screen
        S = np.array(["blue", "red"])
        # item = thisLoop_sample['item']
        S = np.repeat(S, [blue[sample_index], red[sample_index]])
        ok = 0
        while ok == 0:
            coor_x = np.array(random.uniform(-aperture_size,aperture_size, nObservations[sample_index]))
            coor_y = np.array(random.uniform(-aperture_size,aperture_size, nObservations[sample_index]))
            diff_x = abs(coor_x[:, None] - coor_x)
            diff_y = abs(coor_y[:, None] - coor_y)
            # check if there is a pair for which both x and y coordinates overlap. If so, resample coordinates
            tooClose = (diff_x <= mushroom_size*0.9) & (diff_y <= mushroom_size*0.9)
            if (np.triu(tooClose, k=1)==False).all(): # only take into account upper triangle to get rid of diagonal which is always 0/True.
                ok = 1

        # initialize mushroom images
        if red[sample_index] > 0:
            red_mushrooms = [visual.ImageStim(
                win=win,
                name='red_mushrooms',
                image='red_mushroom.png', mask=None,
                ori=0.0, pos=(coor_x[i], coor_y[i]), size=[mushroom_size],
                color=[1,1,1], colorSpace='rgb', opacity=None,
                flipHoriz=False, flipVert=False,
                texRes=128.0, interpolate=True, depth=0.0)
               for i in range(red[sample_index])]
            for i in red_mushrooms:
                i.autoDraw = True
        if blue[sample_index] > 0:
            blue_mushrooms = [visual.ImageStim(
                win=win,
                name='blue_mushrooms',
                image='blue_mushroom.png', mask=None,
                ori=0.0, pos=(coor_x[i], coor_y[i]), size=[mushroom_size],
                color=[1,1,1], colorSpace='rgb', opacity=None,
                flipHoriz=False, flipVert=False,
                texRes=128.0, interpolate=True, depth=0.0)
               for i in range(red[sample_index],red[sample_index]+blue[sample_index])]
            for i in blue_mushrooms:
                i.setAutoDraw(True)

        #win.getMovieFrame()
        #name = "sample_{age}.png".format(age = sample_index)
        #win.saveMovieFrames(name)
      Each Frame:
        if t < 1.2:
            continueRoutine = True
        else:
            continueRoutine = False
      End JS Routine:
        if ((red[sample_index] > 0)) {
            for (var i, _pj_c = 0, _pj_a = red_mushrooms, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                i.setAutoDraw(false);
            }
        }
        if ((blue[sample_index] > 0)) {
            for (var i, _pj_c = 0, _pj_a = blue_mushrooms, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                i.setAutoDraw(false);
            }
        }

        sample_index = (sample_index + 1);
      End Routine:
        if red[sample_index] > 0:
            for i in red_mushrooms:
                i.setAutoDraw(False)

        if blue[sample_index] > 0:
            for i in blue_mushrooms:
                i.setAutoDraw(False)

        sample_index = sample_index + 1
  Routine firstEstimation
    CodeComponent when_to_continue
      Code Type = Both
      Begin JS Routine:
        event.clearEvents();
        document.body.style.cursor='auto';

        estimation_slider.markerPos = 50; // in slider units
        markerPosition = 0; // in height units
        blueRectangle_pos = -0.125;
        blueRectangle_size = 0.25;
        show_estimate_text = " ";


        estimation_slider._opacity = 0;
        confidence._bold = false;
        sliderfont = "Helvetica";
      Begin Routine:
        event.clearEvents()

        estimation_slider.markerPos = 50
        markerPosition = 0
        blueRectangle_pos = -0.125
        blueRectangle_size = 0.25
        show_estimate_text = ''


        slider_opacity = 0
        sliderfont = "Open Sans";
      Each Frame:
        keys = event.getKeys()

        # need to manually check for escape, as our key checking will interfere with
        # Builder's escape check:
        if 'escape' in keys:
            core.quit()

        # move slider colors along with response
        if estimation_slider.markerPos is not None:
             markerPos = estimation_slider.markerPos
             markerPosition = (markerPos - 50) / 200
             show_estimate_text = int(markerPos)
             blue_rectangle_pos = -0.25 + markerPos/200/2
             blue_rectangle_size = markerPos/200



        # check if rating has been completed:
        rating_completed = 0
        if estimation_slider.getRating() is not None:
            rating_completed = 1
            if confidence.getRating() is not None:
                rating_completed = 2

        if ('return' in keys or 'num_enter' in keys) and rating_completed == 2:
            continueRoutine = False # end now
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();


        if ((estimation_slider.markerPos !== undefined)) {
            markerPos = estimation_slider.markerPos;
            markerPosition = (markerPos - 50) / 200;
            blueRectangle_pos = ((- 0.25) + ((markerPos / 200) / 2));
            blueRectangle_size = markerPos / 200;
            show_estimate_text = Number.parseInt(markerPosition*200+50);
        }


        rating_completed = 0;
        if ((estimation_slider.getRating() !== undefined)) {
            rating_completed = 1;
            if ((confidence.getRating() !== undefined)) {
                rating_completed = 2;
            }
        }
        if (((_pj.in_es6("return", keys) || _pj.in_es6("num_enter", keys)) && (rating_completed === 2))) {
            estimation_slider.markerPos = undefined;
            markerPosition = 0;
            show_estimate_text = " ";
            blueRectangle_pos = - 0.125;
            blueRectangle_size = 0.25;
            continueRoutine = false;
        }
      End Experiment:
        bonus = 1.50-abs_deviance*0.04
      End JS Experiment:
        bonus = (1.5 - (abs_deviance * 0.04));
      End JS Routine:
        deviance = Number.parseInt((estimation_slider.getRating() - (true_ratio * 100)));
        abs_deviance = Math.abs(deviance);
        if ((startGame === 1)) {
            for (var iConfidence = 0, _pj_a = confidence.getRating(); (iConfidence < _pj_a); iConfidence += 1) {
                list_deviance.push(abs_deviance);
            }
            psychoJS.experiment.addData("cross_hair.ITI", crosshair_ITI);
            psychoJS.experiment.addData("seen_ratio", seen_ratio);
            psychoJS.experiment.addData("nMushrooms", String(nObservations));
            psychoJS.experiment.addData("nBlue", String(blue));
            psychoJS.experiment.addData("nRed", String(red));
            psychoJS.experiment.addData("estimation.rating", estimation_slider.getRating());
            psychoJS.experiment.addData("estimation.rt", estimation_slider.getRT());
            psychoJS.experiment.addData("confidence.response", confidence.getRating());
            psychoJS.experiment.addData("confidence.rt", confidence.getRT());
            // nRemaining is nRemaining across all, so nRemaining===0 is the very very last trial.
            if ((trials_parameters._snapshots[trial_index]["nRemaining"] === 0)) {
                sample_deviance = list_deviance[Math.floor(Math.random() * list_deviance.length)];
                bonus = (1.5 - (sample_deviance * 0.04));
                if ((bonus < 0)) {
                    bonus = 0;
                }
                expInfo["bonus"] = bonus;
            }
        }

        trial_index = trial_index + 1
      End Routine:
        #win.getMovieFrame()
        #win.saveMovieFrames('response.png')

        # performance
        deviance = int(estimation_slider.getRating() - true_ratio*100)
        abs_deviance = abs(deviance)

        # only save data during actual task, not practice
        if startGame == 1:
            for iConfidence in range(0,confidence.getRating()):
                list_deviance.append(abs_deviance)
            loop_trials.addData('cross_hair.ITI', crosshair_ITI)
            loop_trials.addData('seen_ratio', seen_ratio)
            loop_trials.addData('nMushrooms', " ".join(map(str, nObservations)))
            loop_trials.addData('nBlue', " ".join(map(str, blue)))
            loop_trials.addData('nRed', " ".join(map(str, red)))
            loop_trials.addData('estimation.rating', estimation_slider.getRating())
            loop_trials.addData('estimation.rt', estimation_slider.getRT())
            loop_trials.addData('confidence.response', confidence.getRating())
            loop_trials.addData('confidence.rt', confidence.getRT())

            if loop_trials.nRemaining == 0:
                list_deviance = np.array(list_deviance)
                sample_deviance = sample(list(list_deviance),1)[0]
                bonus = 1.50 - sample_deviance*0.04
                if bonus < 0:
                    bonus = 0 # never lower than
                expInfo['bonus'] = bonus

        trial_index = trial_index + 1
    TextComponent how_many_mushrooms
      letterHeight = 0.035
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.8
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      text:
        Based on the sample you just saw, how many mushroom pickers should carry a BLUE bag today?
    TextComponent showEstimate
      color = blue
      font [set every repeat] = $sliderfont
      letterHeight = 0.035
      pos [set every frame] = [markerPosition, 0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $show_estimate_text
      units = height
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    SliderComponent estimation_slider
      borderColor = none
      color = White
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = (0,100)
      letterHeight = 0.025
      opacity = 0
      pos = (0, 0.15)
      saveStartStop = False
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = slider
      ticks = (0,100)
      units = height
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    PolygonComponent red_rectangle
      fillColor = red
      lineWidth = 0.5
      pos = (0, 0.15)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.04)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blue_rectangle
      fillColor = blue
      lineWidth = 0.5
      pos [set every frame] = [blueRectangle_pos, 0.15]
      saveStartStop = False
      shape = rectangle
      size [set every frame] = [blueRectangle_size, 0.04]
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent sliderMarker
      fillColor = white
      pos [set every frame] = [markerPosition, 0.15]
      saveStartStop = False
      shape = rectangle
      size = (0.008, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent slider_text0
      font [set every repeat] = $sliderfont
      letterHeight = 0.03
      pos = (-0.25, 0.11)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 0
      units = height
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    TextComponent slider_text100
      font [set every repeat] = $sliderfont
      letterHeight = 0.03
      pos = (0.25, 0.11)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 100
      units = height
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    TextComponent confidence_text
      letterHeight = 0.035
      pos = (0, -0.1)
      saveStartStop = False
      startVal [condition] = rating_completed > 0
      text = Please rate your confidence in your decision:
      units = height
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    SliderComponent confidence
      color = White
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = ('low', 'medium', 'high')
      letterHeight = 0.025
      pos = (0, -0.17)
      saveStartStop = False
      size = (0.3, 0.02)
      startVal [condition] = rating_completed > 0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3)
      units = height
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    TextComponent space_to_submit_estimation
      letterHeight = 0.025
      pos = (0, -0.4)
      saveStartStop = False
      startVal [condition] = rating_completed == 2
      text = Press ENTER to submit your response
      units = height
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  Routine instrPrac
    KeyboardComponent response
      allowedKeys = 'right', 'left', 'return', 'num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_5
      Code Type = Both
      Begin Experiment:
        Pr1 = ("PART 2: ESTIMATION GAME\n\n\nBefore we start the game, we will provide you with some instructions, "
        "followed by a few practice rounds.\n\n"
        "You can go back and forth through the instructions by pressing the LEFT and RIGHT arrow keys.\n\n\n"
        "Now press the RIGHT arrow key to move on to the next instruction.")

        Pr2 = ("In this game, you are part of a community for which the main food resource is mushrooms\n\n"
        "These mushrooms are harvested from a forest in the vicinity of your village. "
        "Soon, it will be time to harvest, and the leader of the community has asked you for your help in coordinating this.\n\n"

        Pr3 = ("Each day, 100 people from the community will enter the forest.\n"
        "Each person will carry a bag to pick 1 type of mushroom.\n\n”
        "There are two types of mushrooms, blue and red ones.\n"
        "The problem is that these two types of mushrooms each need their own type of bag."
        "A blue mushroom can only be carried in a blue bag and a red mushroom can only be carried in a red bag.")

        Pr4 = ("Your task at the start of the day is to decide how many people will go into the forest carrying a blue bag and how many people will be carrying a red bag.\n\n"
        "If on one day there are 70 blue mushrooms and 30 red mushrooms in the forest, you need to give 70 people a blue bag and 30 people a red bag."
        "If you would give too many people a blue bag, some people carrying a blue bag would arrive home with an empty bag, "
        "while some red mushrooms would be left in the forest because there were not enough people with a red bag.\n"
        "That means your yield would not be optimal.”)

        Pr5 = ("To make an informed guess about how many mushroom pickers should carry a blue or a red bag, "
        "you will get up early each morning to walk through 5 fields that surround your village.\n\n"
        "There are some blue and red mushrooms growing in these fields. "
        "You know that the mushrooms you see here are a good, but not exact representation of what will be found in the forest on that day.\n\n"
        "Thus, based on the number of blue versus red mushrooms in these 5 nearby fields, you can decide how many pickers you give a blue or a red bag.")

        Pr6 = ("On some days, you encounter many mushrooms in the fields, so you have a large sample to base your estimate on."
        "On other days, however, you encounter fewer mushrooms, so you have a smaller sample to base your estimate on.\n\n"
        "The more mushrooms you find in the nearby fields, the more precisely they can represent the mushrooms in the forest.")

        Pr7 = ("During the game, you will first see the mushrooms in each of the 5 fields.\n\n"
        "You are then asked to decide how many out of 100 pickers should carry a blue bag.\n\n"
        "This is followed by rating your confidence in your decision.\n\n"
        "You will play multiple rounds. Each round represents a new day and all days together represent the entire harvest season.")

        Pr8 = ("To get a better understanding of the task and how everything looks, you will first play some practice days.\n\n"
        "Press ENTER to start the practice.")



        PrDict = { "1": Pr1,
                      "2": Pr2,
                      "3": Pr3,
                      "4": Pr4,
                      "5": Pr5,
                      "6": Pr6,
                      "7": Pr7,
                      "8": Pr8,
        }

        currentPr = "1"
      Begin JS Experiment:
        Pr1 = "PART 2: ESTIMATION GAME\n\n\nBefore we start the game, we will provide you with some instructions, followed by a few practice rounds.\n\nYou can go back and forth through the instructions by pressing the LEFT and RIGHT arrow keys.\n\n\nNow press the RIGHT arrow key to move on to the next instruction."

        Pr2 = "In this game, you are part of a community for which the main food resource is mushrooms\n\nThese mushrooms are harvested from a forest in the vicinity of your village. Soon, it will be time to harvest, and the leader of the community has asked you for your help in coordinating this."

        Pr3 = "Each day, 100 people from the community will enter the forest.\nEach person will carry a bag to pick 1 type of mushroom.\n\nThere are two types of mushrooms, blue and red ones.\nThe problem is that these two types of mushrooms each need their own type of bag. A blue mushroom can only be carried in a blue bag and a red mushroom can only be carried in a red bag."

        Pr4 = "Your task at the start of the day is to decide how many people will go into the forest carrying a blue bag and how many people will be carrying a red bag.\n\nIf on one day there are 70 blue mushrooms and 30 red mushrooms in the forest, you need to give 70 people a blue bag and 30 people a red bag. If you would give too many people a blue bag, some people carrying a blue bag would arrive home with an empty bag, while some red mushrooms would be left in the forest because there were not enough people with a red bag.\nThat means your yield would not be optimal."

        Pr5 = "To make an informed guess about how many mushroom pickers should carry a blue or a red bag, you will get up early each morning to walk through 5 fields that surround your village.\n\nThere are some blue and red mushrooms growing in these fields. You know that the mushrooms you see here are a good, but not exact representation of what will be found in the forest on that day.\n\nThus, based on the number of blue versus red mushrooms in these 5 nearby fields, you can decide how many pickers you give a blue or a red bag."

        Pr6 = "On some days, you encounter many mushrooms in the fields, so you have a large sample to base your estimate on. On other days, however, you encounter fewer mushrooms, so you have a smaller sample to base your estimate on.\n\nThe more mushrooms you find in the nearby fields, the more precisely they can represent the mushrooms in the forest."

        Pr7 = "During the game, you will first see the mushrooms in each of the 5 fields.\n\nYou are then asked to decide how many out of 100 pickers should carry a blue bag.\n\nThis is followed by rating your confidence in your decision.\n\nYou will play multiple rounds. Each round represents a new day and all days together represent the entire harvest season."

        Pr8 = "To get a better understanding of the task and how everything looks, you will first play some practice days.\n\nPress ENTER to start the practice."

        PrDict = {"1": Pr1, "2": Pr2, "3": Pr3, "4": Pr4, "5": Pr5, "6": Pr6, "7": Pr7, "8": Pr8};
        currentPr = "1";
      Begin JS Routine:
        event.clearEvents();

        progress_bar_size = (((window_x * 2) / 13) * Number.parseInt(currentPr));
        progress_bar_pos = ((- window_x) + ((((window_x * 2) / 13) * Number.parseInt(currentPr)) / 2));
        progress_text = (("Instructions: " + currentPr) + "/13");
      Begin Routine:
        event.clearEvents()

        progress_bar_size = (window_x*2)/13 * int(currentPr)
        progress_bar_pos = (-window_x) + (window_x*2)/13 * int(currentPr) / 2
        progress_text = "Instructions: " + currentPr + "/13"
      End JS Routine:
        if ((((response.keys === "return") || (response.keys === "num_enter")) && (Number.parseInt(currentPr) === 8))) {
            currentPr = (Number.parseInt(currentPr) + 1);
        } else {
            if (((response.keys === "right") && (Number.parseInt(currentPr) === 8))) {
                currentPr = Number.parseInt(currentPr);
            } else {
                if (((response.keys === "right") && (Number.parseInt(currentPr) !== 8))) {
                    currentPr = (Number.parseInt(currentPr) + 1);
                } else {
                    if ((response.keys === "left")) {
                        currentPr = (Number.parseInt(currentPr) - 1);
                    }
                }
            }
        }
        if ((currentPr === 0)) {
            currentPr = 1;
        } else {
            if ((currentPr === 9)) {
                loop_instrPrac.finished = true;
            }
        }
        currentPr = currentPr.toString();
        trial_index = 0;
      End Routine:
        #win.getMovieFrame()
        #name = "instrPractice_{age}.png".format(age = currentPr)
        #win.saveMovieFrames(name)

        if (response.keys == "return" or response.keys == "num_enter") and int(currentPr) == 8:
            currentPr = int(currentPr) + 1
        elif response.keys == "right" and int(currentPr) == 8:
            currentPr = int(currentPr)
        elif response.keys == "right" and int(currentPr) != 8:
            currentPr = int(currentPr) + 1
        elif response.keys == "left":
            currentPr = int(currentPr) - 1

        if currentPr == 0:
            currentPr = 1  # can't go lower than
        elif currentPr == 9:
            loop_instrPrac.finished=True

        currentPr = str(currentPr)

        trial_index = 0
    TextComponent text
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $PrDict[currentPr]
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    ImageComponent blue_mushroom
      flipHoriz = True
      image = blue_mushroom.png
      ori = 350
      pos [set every repeat] = (window_x-0.3, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent red_mushroom
      image = red_mushroom.png
      ori = 10
      pos [set every repeat] = (window_x-0.2, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent progress_bar_fixed_2
      fillColor = white
      pos [set every repeat] = (0, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_x*2, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent progress_bar_2
      fillColor = green
      lineColor = green
      pos [set every repeat] = (progress_bar_pos, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (progress_bar_size, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent progress_IC_2
      color = black
      letterHeight = 0.02
      pos = (0, 0.48)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        $progress_text
  Routine informedConsent
    CodeComponent informedConsent_code
      Code Type = Auto->JS
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      Begin Experiment:
        IC1 = ("Dear participant,\n\nFirst, thank you for your interest!\nBefore the study starts, it is important that you are informed about the procedures. "
        "Therefore, we would like you to read this information letter carefully.\nPlease do not hesitate to ask for clarification about this text or the general procedure. "
        "If anything is unclear, the researcher will answer your questions.\n\n\n"
        "You can go back and forth through the instructions by pressing the LEFT and RIGHT arrow keys.\n\n\n"
        "Now press the RIGHT arrow key to move on to the next instruction.")

        IC2 = ("Type of Research:\n\nYou will participate in an online estimation study.\n\nThe study will start with a short personality questionnaire, followed by an estimation game. This will take approximately 30 minutes in total.\n\n\n")

        IC3 = ("Voluntary participation:\n\nThere are no consequences if you decide not to participate in this study.\n"
        "During the study, you are free to stop participating at any moment, without giving a reason for doing so.\n"
        "Within seven days after participation, you are allowed to withdraw your data from this study and your data will be deleted permanently.")

        IC4 = ("Your privacy is guaranteed:\n\n"
        "Your personal information (about who you are) remains confidential and will not be shared without your explicit consent.\n"
        "Your research data will be analyzed by the researchers who collected the information. "
        "Research data published in scientific journals will be anonymous and cannot be traced back to you as an individual. "
        "Completely anonymized data can be shared with other researchers.")

        IC5 = ("Discomfort, risks and insurance:\n\n"
        "As with any research at the University of Amsterdam (UvA), a standard liability insurance applies.\n\n\n\n\n"
        "Compensation:\n\nA flat fee of £3.00 upon completion of the study, plus a bonus of up to £1.50 depending on your performance in the estimation game.")

        IC6 = ("Further information:\n\nShould you have questions about this study at any given moment, please contact the responsible researcher,\n"
        "Lieke Hofmans (l.hofmans@uva.nl).\n\nFormal complaints about this study can be addressed to the Ethics Review Board, "
        "Helle Larsen (h.larsen@uva.nl).")

        IC7 = ("Informed consent:\n\nBy pressing ENTER you register you give informed consent:\n"
        "You are well informed, have read the aforementioned information carefully, and wish to start the study.\n\n\n"
        "If you wish to go over the information once more, you can use the LEFT and RIGHT arrow keys to go back and forth.\n\n"
        "If you do not wish to start the study, you can leave the study now.")

        ICDict = { "1": IC1,
                      "2": IC2,
                      "3": IC3,
                      "4": IC4,
                      "5": IC5,
                      "6": IC6,
                      "7": IC7,
        }

        currentIC = "1"
      Begin Routine:
        event.clearEvents()

        progress_bar_size = (window_x*2)/7 * int(currentIC)
        progress_bar_pos = (-window_x) + (window_x*2)/7 * int(currentIC) / 2
        progress_text = "Informed consent: " + currentIC + "/7"
      End Routine:
        #win.getMovieFrame()
        #name = "informed_consent_{age}.png".format(age = currentIC)
        #win.saveMovieFrames(name)

        if (informed_consent_responses.keys == "return" or informed_consent_responses.keys == "num_enter") and int(currentIC) == 7:
            currentIC = int(currentIC) + 1
        elif informed_consent_responses.keys == "right" and int(currentIC) == 7:
            currentIC = int(currentIC)
        elif informed_consent_responses.keys == "right" and int(currentIC) != 7:
            currentIC = int(currentIC) + 1
        elif informed_consent_responses.keys == "left":
            currentIC = int(currentIC) - 1

        if currentIC == 0:
            currentIC = 1  # can't go lower than
        elif currentIC == 8:
            loop_informedConsent.finished=True
            expInfo['informedConsent'] = "yes"

        currentIC = str(currentIC)
    TextComponent informed_consent
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $ICDict[currentIC]
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    KeyboardComponent informed_consent_responses
      allowedKeys = 'right', 'left', 'return', 'num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    PolygonComponent progress_bar_fixed
      fillColor = white
      pos [set every repeat] = (0, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_x*2, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent progress_bar
      fillColor = green
      lineColor = green
      pos [set every repeat] = (progress_bar_pos, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (progress_bar_size, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent progress_IC
      color = black
      letterHeight = 0.02
      pos = (0, 0.48)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        $progress_text
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  Routine instructions
    KeyboardComponent key_resp_2
      allowedKeys = 'right', 'left', 'return', 'num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_7
      Code Type = Both
      Begin Experiment:
        event.clearEvents()

        startGame = 0

        Instr1 = ("BONUS:\n\n"
        "At the end of the harvest season you will receive a bonus.\n"
        "The amount of this bonus depends on how well you did during the game, and is calculated as follows:\n\n"
        "The computer will randomly pick one of the harvest days and compare your decision that day to the correct answer. "
        "If your decision was exactly correct, you will receive a bonus of £1.50. For each blue bag off, we will deduct 4 pence.\n\n\n"
        "Press the RIGHT arrow key to continue.")

        Instr2 = ("For example, if you decided to give 70 out of the 100 pickers a blue bag, but there were 88 blue mushrooms in the forest, "
        "you will receive £1.50 - 18 x £0.04 = £0.78.\n\n"
        "Your bonus will never go below £0.00.\n\n"
        "This means that each and every day might determine your bonus at the end of the season.\n\n\n"
        "Press the RIGHT arrow key to continue.")

        Instr3 = "Importanty, you can increase your chances of earning a high bonus by rating your confidence in your estimate:\n\n"
        "If you rate your confidence as MEDIUM, the chance that the computer will pick that day will be TWO times as high as when you would rate your confidence as LOW.\n\n"
        "If you rate your confidence as HIGH, the chance that the computer will pick that day will be THREE times as high as when you would rate your confidence as LOW.\n\n"
        "Thus, if you think that on a certain day your estimate is close to the correct answer, "
        "you can increase the chance that the computer will pick that particular day by giving a higher confidence rating.\n\n\n"
        "Press the RIGHT arrow key to continue.")

        Instr4 = ("As said before, the game will consist of multiple harvest days and all days together represent the harvest season. "
        "The entire season consists of 3 blocks. After each block, you can take a short break before continuing with the next block.\n\n\n\n"
        "If everything is clear, you can press ENTER to start the game")


        InstrDict = { "1": Instr1,
                      "2": Instr2,
                      "3": Instr3,
                      "4": Instr4,
        }

        currentInstr = "1"
      Begin JS Experiment:
        event.clearEvents();
        startGame = 0;

        Instr1 = "BONUS:\n\nAt the end of the harvest season you will receive a bonus.\nThe amount of this bonus depends on how well you did during the game, and is calculated as follows:\n\nThe computer will randomly pick one of the harvest days and compare your decision that day to the correct answer. If your decision was exactly correct, you will receive a bonus of \u00a31.50. For each blue bag off, we will deduct 4 pence.\n\n\nPress the RIGHT arrow key to continue."

        Instr2 = "For example, if you decided to give 70 out of the 100 pickers a blue bag, but there were 88 blue mushrooms in the forest, you will receive \u00a31.50 - 18 x \u00a30.04 = \u00a30.78.\n\nYour bonus will never go below \u00a30.00.\n\nThis means that each and every day might determine your bonus at the end of the season.\n\n\nPress the RIGHT arrow key to continue."

        Instr3 = "Importanty, you can increase your chances of earning a high bonus by rating your confidence in your estimate:\n\nIf you rate your confidence as MEDIUM, the chance that the computer will pick that day will be TWO times as high as when you would rate your confidence as LOW.\n\nIf you rate your confidence as HIGH, the chance that the computer will pick that day will be THREE times as high as when you would rate your confidence as LOW.\n\nThus, if you think that on a certain day your estimate is close to the correct answer, you can increase the chance that the computer will pick that particular day by giving a higher confidence rating.\n\n\nPress the RIGHT arrow key to continue."

        Instr4 = "As said before, the game will consist of multiple harvest days and all days together represent the harvest season. The entire season consists of 3 blocks. After each block, you can take a short break before continuing with the next block.\n\n\n\nIf everything is clear, you can press ENTER to start the game."

        InstrDict = {"1": Instr1, "2": Instr2, "3": Instr3, "4": Instr4};
        currentInstr = "1";
      Begin JS Routine:
        progress_bar_size = (((window_x * 2) / 13) * (Number.parseInt(currentInstr) + 9));
        progress_bar_pos = ((- window_x) + ((((window_x * 2) / 13) * (Number.parseInt(currentInstr) + 9)) / 2));
        progress_text = (("Instructions: " + (Number.parseInt(currentInstr)+9).toString()) + "/13");
      Begin Routine:
        progress_bar_size = (window_x*2)/13 * (int(currentInstr) + 9)
        progress_bar_pos = (-window_x) + (window_x*2)/13 * (int(currentInstr) + 9) / 2
        progress_text = "Instructions: " + str(int(currentInstr)+9) + "/13"
      End JS Routine:
        if ((((key_resp_2.keys === "return") || (key_resp_2.keys === "num_enter")) && (Number.parseInt(currentInstr) === 4))) {
            currentInstr = (Number.parseInt(currentInstr) + 1);
        } else {
            if (((key_resp_2.keys === "right") && (Number.parseInt(currentInstr) === 4))) {
                currentInstr = Number.parseInt(currentInstr);
            } else {
                if (((key_resp_2.keys === "right") && (Number.parseInt(currentInstr) !== 4))) {
                    currentInstr = (Number.parseInt(currentInstr) + 1);
                } else {
                    if ((key_resp_2.keys === "left")) {
                        currentInstr = (Number.parseInt(currentInstr) - 1);
                    }
                }
            }
        }
        if ((currentInstr === 0)) {
            currentInstr = 1;
        } else {
            if ((currentInstr === 5)) {
                loop_instr.finished = true;
            }
        }
        currentInstr = currentInstr.toString();
        startGame = 1;
        list_deviance = [];
        trial_index = 0;
      End Routine:
        #win.getMovieFrame()
        #name = "instructions_{age}.png".format(age = currentInstr)
        #win.saveMovieFrames(name)

        if (key_resp_2.keys == "return" or key_resp_2.keys == "num_enter") and int(currentInstr) == 4:
            currentInstr = int(currentInstr) + 1
        elif key_resp_2.keys == "right" and int(currentInstr) == 4:
            currentInstr = int(currentInstr)
        elif key_resp_2.keys == "right" and int(currentInstr) != 4:
            currentInstr = int(currentInstr) + 1
        elif key_resp_2.keys == "left":
            currentInstr = int(currentInstr) - 1

        if currentInstr == 0:
            currentInstr = 1  # can't go lower than
        elif currentInstr == 5:
            loop_instr.finished=True

        currentInstr = str(currentInstr)

        startGame = 1
        list_deviance = []

        trial_index = 0
    TextComponent text_3
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $InstrDict[currentInstr]
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    ImageComponent blue_mushroom_2
      flipHoriz = True
      image = blue_mushroom.png
      ori = 350
      pos [set every repeat] = (window_x-0.3, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent red_mushroom_2
      image = red_mushroom.png
      ori = 10
      pos [set every repeat] = (window_x-0.2, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent progress_bar_fixed_3
      fillColor = white
      pos [set every repeat] = (0, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_x*2, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent progress_bar_3
      fillColor = green
      lineColor = green
      pos [set every repeat] = (progress_bar_pos, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (progress_bar_size, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent progress_IC_3
      color = black
      letterHeight = 0.02
      pos = (0, 0.48)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        $progress_text
  Routine pause
    TextComponent shortBreak
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Great job!

        You can now take a 2 minute break before we continue with the next part of the season.

        If you wish to continue earlier, you can press ENTER to start immediately.
    CodeComponent code_6
      Code Type = Both
      Begin JS Routine:
        event.clearEvents();

        //if (((((trials_parameters._snapshots[trial_index-1]["thisTrialN"] + 1) % trials_parameters._snapshots[trial_index-1]["nStim"]) === 0) && (trials_parameters._snapshots[trial_index-1]["nRemaining"] !== 0))) {
        //nPerLoop = trials_parameters._snapshots[trial_index-1]["nStim"] // when multiple reps
        nPerLoop = 27; // when one large rep, devided into multiple blocks
        if (((((trials_parameters._snapshots[trial_index-1]["thisTrialN"] + 1) % nPerLoop) === 0) && (trials_parameters._snapshots[trial_index-1]["nRemaining"] !== 0))) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
      Begin Routine:
        event.clearEvents()

        # I only want this routine to show at the end of each repetition.
        nPerLoop = loop_trials.nTotal / loop_trials.nReps # when multiple reps
        nPerLoop = 27 # when one large rep, devided into multiple blocks
        if (loop_trials.thisN + 1) % nPerLoop == 0 and loop_trials.nRemaining != 0:
            continueRoutine = True
        else:
            continueRoutine = False
      Each Frame:
        timer_text = int(round(120 - t, ndigits = 0))
      Each JS Frame:
        timer_text = Math.floor(120 - t);
      End JS Routine:
        if ((startGame === 1)) {
            if (((((trials_parameters._snapshots[trial_index-1]["thisTrialN"] + 1) % trials_parameters._snapshots[trial_index-1]["nStim"]) === 0) && (trials_parameters._snapshots[trial_index-1]["nRemaining"] !== 0))) {
                if ((t > 119)) {
                    psychoJS.experiment.addData("shortBreak.secs", 120);
                } else {
                    psychoJS.experiment.addData("shortBreak.secs", t);
                }
            }
        }
      End Routine:
        if startGame == 1:
            if t > 119:
                loop_trials.addData('shortBreak.secs', 120)
            else:
                loop_trials.addData('shortBreak.secs', t)
    KeyboardComponent key_resp_3
      allowedKeys = 'return', 'num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      store = nothing
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    TextComponent timer
      letterHeight = 0.1
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every frame] = $timer_text
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    ImageComponent blue_mushroom_3
      flipHoriz = True
      image = blue_mushroom.png
      ori = 350
      pos [set every repeat] = (window_x-0.3, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent red_mushroom_3
      image = red_mushroom.png
      ori = 10
      pos [set every repeat] = (window_x-0.2, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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
  Routine instrBonus
    CodeComponent code_9
      Code Type = Both
      Begin JS Routine:
        text1 = "Great job! You have finished the harvest season.\n\n";
        text2 = "On the day that was selected by the computer, the number of mushroom pickers you sent into the forest carrying a BLUE bag deviated ";
        text3 = sample_deviance.toString();
        text4 = " bags from the correct answer.\nTherefore, your bonus will be \u00a31.50 - ";
        text5 = " x \u00a30.04 =\n\n\u00a3";
        text6 = bonus.toFixed(2);
        text7 = " \n\nPress ENTER to continue.";
        end_text = (((((((text1 + text2) + text3) + text4) + text3) + text5) + text6) + text7);
      Begin Routine:
        event.clearEvents()

        # sprintf function doesnt automatically translate from py to JS, so solved it this way
        text1 = "Great job! You have finished the harvest season.\n\n"
        text2 = "On the day that was selected by the computer, the number of mushroom pickers you sent into the forest carrying a BLUE bag deviated "
        text3 = str(sample_deviance)
        text4 = " bags from the correct answer.\nTherefore, your bonus will be £1.50 - "
        text5 = " x £0.04 =\n\n£"
        text6 = format(bonus, '.2f')
        text7 = " \n\nPress ENTER to continue."
        end_text =  text1 + text2 + text3 + text4 + text3 + text5 + text6 + text7
      End Routine:
        #win.getMovieFrame()
        #win.saveMovieFrames('bonus.png')
    TextComponent bonus_text
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_text
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    KeyboardComponent enter_to_end
      allowedKeys = 'return', 'num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent blue_mushroom_4
      flipHoriz = True
      image = blue_mushroom.png
      ori = 350
      pos [set every repeat] = (window_x-0.3, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent red_mushroom_4
      image = red_mushroom.png
      ori = 10
      pos [set every repeat] = (window_x-0.2, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine instrEnd
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
      End Routine:
        #win.getMovieFrame()
        #win.saveMovieFrames('end.png')
    TextComponent textFinish
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you very much for participating.

        This screen marks the end of the study.

        ATTENTION: Please click FINISH to finish this study and receive your Prolific code.

        You are reminded that by completing this study, you are agreeing with your participation and the submission of your data.
    KeyboardComponent enterFinish
      allowedKeys = 'return', 'num_enter'
      disabled = True
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent continue_button_2
      image = finish.png
      pos = (0.4, -0.35)
      saveStartStop = False
      size = (0.1, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse_2
      clickable = continue_button_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine setup
    CodeComponent code_start
      Code Type = Both
      Before Experiment:
        import pandas as pd
        from numpy import random
        from random import sample
        from random import shuffle
      Begin Experiment:
        window_dimension = win.size[0] / win.size[1]
        window_y = 0.5
        window_x = window_y * window_dimension
        aperture_size = window_y * 0.4 # size of square where the mushrooms can be shown (in one direction)
        mushroom_size = aperture_size * 0.50 # size of mushroom is 1/10th of screen heigth

        # background color
        bg_color=colors.Color((-0.4000, -0.4000, -0.4000), space='rgb')
        win.color = bg_color
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        shuffle = util.shuffle;
        Array.prototype.append = [].push;

        randint = function(min, maxplusone) {
            return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }

        range = function (size, startAt = 0) {
            return [...Array(size).keys()].map(i => i + startAt);
        }

        sum = function (arr) {
            return arr.reduce((a,b)=>a+b)
        }

        allAbsDifferences = function(arr, N){
            var diff;
            var diff_list = [];
            // Traverse the array
            for(var elementA = 0; elementA < N; elementA++)
            {
                for(var elementB = 0; elementB < N; elementB++)
                {
                    if ((elementA !== elementB)) {
                        diff = Math.abs((arr[elementA] - arr[elementB]));
                        diff_list.push(diff);
                    }
                }
            }
            return diff_list;
        }

        arrayMatch = function(arr1, arr2) {
            var match;
            var match_list = [];
            for (var i = 0; i < arr1.length; i++) {
                match = 0;
                if (arr1[i] == arr2[i]) {
                    match = 1;
                }
                match_list.push(match)
            }
            return match_list;
        }

        // background color
        bg_color= new util.Color([-0.4000, -0.4000, -0.4000])
        win.color = bg_color
      Begin JS Routine:
        selected_practice_trials = shuffle(range(81,0));
        selected_practice_trials.length = 5;
        selected_trials = shuffle(range(81,0));
        selected_trials.length = 81;



        test_Q1._skin["STANDARD"]["MARKER_COLOR"] = new util.Color('black') // sets marker color for all sliders
      Begin Routine:
        selected_practice_trials = randchoice(81, size = 5, replace = False)
        selected_trials = randchoice(81, size = 81, replace = False)
      End JS Routine:
        window_dimension = (win.size[0] / win.size[1]);
        window_y = 0.5;
        window_x = (window_y * window_dimension);
        aperture_size = (window_y * 0.4);
        mushroom_size = (aperture_size * 0.5);
  Routine ISI
    TextComponent isi
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.3
      units = height
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  Routine comments
    TextComponent comments_title
      letterHeight = 0.035
      pos = [0, 0.35]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In order to improve our study we would like to receive some feedback from you!
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    TextComponent comments_instructions
      letterHeight = 0.025
      pos = [0, 0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Were the instructions clear?
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    TextboxComponent input_instructions
      anchor = top-left
      autoLog = False
      bold = False
      color = Black
      editable = True
      fillColor = White
      letterHeight = 0.02
      pos = [-0.3, 0.17]
      saveStartStop = False
      size = [0.6, 0.1]
      startVal [time (s)] = 0.0
      units = height
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    TextComponent comments_other
      letterHeight = 0.025
      pos = [0, -0.05]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Do you have any feedback about the study, such as: Were the tasks easy to understand? Is there anything you liked or disliked about the study?
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    TextboxComponent input_other
      anchor = top-left
      autoLog = False
      bold = False
      color = Black
      editable = True
      fillColor = White
      letterHeight = 0.02
      pos = [-0.3, -0.09]
      saveStartStop = False
      size = [0.6, 0.1]
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent continue_button
      image = continue.png
      pos = (0.4, -0.35)
      saveStartStop = False
      size = (0.1, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse
      clickable = continue_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_12
      Code Type = Auto->JS
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      End Routine:
        expInfo['instructions_clear'] = input_instructions.text
        expInfo['other_comments'] = input_other.text
  Routine test_questions
    CodeComponent code_11
      Code Type = Both
      Begin JS Routine:
        progress_bar_size = (((window_x * 2) / 12) * 9);
        progress_bar_pos = ((- window_x) + ((((window_x * 2) / 12) * 9) / 2));

        test_Q1._fontSize = 0.015;
        test_Q1._bold = false;
        test_Q2._fontSize = 0.015;
        test_Q2._bold = false;
        test_Q3._fontSize = 0.015;
        test_Q3._bold = false;
        test_Q4._fontSize = 0.015;
        test_Q4._bold = false;
        test_Q5._fontSize = 0.015;
        test_Q5._bold = false;
      Begin Routine:
        progress_bar_size = (window_x*2)/12 * 9
        progress_bar_pos = (-window_x) + (window_x*2)/12 * 9 / 2
      Each Frame:
        keys = event.getKeys()

        # need to manually check for escape, as our key checking will interfere with
        # Builder's escape check:
        if 'escape' in keys:
            core.quit()

        # check if questions have been completed correctly:
        rating_completed = 0
        show_false_1 = " "
        show_false_2 = " "
        show_false_3 = " "
        show_false_4 = " "
        show_false_5 = " "

        if test_Q1.getRating() == 2:
            rating_completed = rating_completed + 1
        elif test_Q1.getRating() == 1:
            show_false_1 = "Wrong answer. Please pick another option."

        if test_Q2.getRating() == 1:
            rating_completed = rating_completed + 1
        elif test_Q2.getRating() == 2:
            show_false_2 = "Wrong answer. Please pick another option."

        if test_Q3.getRating() == 2:
            rating_completed = rating_completed + 1
        elif test_Q3.getRating() == 1:
            show_false_3 = "Wrong answer. Please pick another option."

        if test_Q4.getRating() == 3:
            rating_completed = rating_completed + 1
        elif test_Q4.getRating() < 3:
            show_false_4 = "Wrong answer. Please pick another option."

        if test_Q5.getRating() == 2:
            rating_completed = rating_completed + 1
        elif test_Q5.getRating() == 1:
            show_false_5 = "Wrong answer. Please pick another option."

        # show participant that they can press space
        show_enter = ""
        if rating_completed == 5:
            show_enter = "Press ENTER to continue"

        if ('return' in keys or 'num_enter'in keys) and rating_completed == 5:
            continueRoutine = False # end now
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();

        rating_completed = 0;
        show_false_1 = " ";
        show_false_2 = " ";
        show_false_3 = " ";
        show_false_4 = " ";
        show_false_5 = " ";

        if ((test_Q1.getRating() === 2)) {
            rating_completed = (rating_completed + 1);
        } else {
            if ((test_Q1.getRating() === 1)) {
                show_false_1 = "Wrong answer. Please pick another option.";
            }
        }
        if ((test_Q2.getRating() === 1)) {
            rating_completed = (rating_completed + 1);
        } else {
            if ((test_Q2.getRating() === 2)) {
                show_false_2 = "Wrong answer. Please pick another option.";
            }
        }
        if ((test_Q3.getRating() === 2)) {
            rating_completed = (rating_completed + 1);
        } else {
            if ((test_Q3.getRating() === 1)) {
                show_false_3 = "Wrong answer. Please pick another option.";
            }
        }
        if ((test_Q4.getRating() === 3)) {
            rating_completed = (rating_completed + 1);
        } else {
            if ((test_Q4.getRating() < 3)) {
                show_false_4 = "Wrong answer. Please pick another option.";
            }
        }
        if ((test_Q5.getRating() === 2)) {
            rating_completed = (rating_completed + 1);
        } else {
            if ((test_Q5.getRating() === 1)) {
                show_false_5 = "Wrong answer. Please pick another option.";
            }
        }

        show_enter = "";
        if ((rating_completed === 5)) {
            show_enter = "Press ENTER to continue";
        }
        if (((_pj.in_es6("return", keys) || _pj.in_es6("num_enter", keys)) && (rating_completed === 5))) {
            continueRoutine = false;
        }
    PolygonComponent progress_bar_fixed_4
      fillColor = white
      pos [set every repeat] = (0, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_x*2, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent progress_bar_4
      fillColor = green
      lineColor = green
      pos [set every repeat] = (progress_bar_pos, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (progress_bar_size, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent progress_IC_4
      color = black
      letterHeight = 0.02
      pos = (0, 0.48)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Instructions: 9/13
      units = height
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    TextComponent text_4
      letterHeight = 0.03
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You have now finished the practice days. Before we continue, we want to ask you a few questions about your understanding of the game:
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    TextComponent Q1
      letterHeight = 0.02
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1. Each day, the distribution of the blue and red mushrooms is the same:  
      units = height
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    SliderComponent test_Q1
      color = white
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      labels = ('True', 'False')
      letterHeight = 0.015
      pos = (0, 0.26)
      saveStartStop = False
      size = (0.17, 0.015)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2)
      units = height
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    TextComponent wrong_answer_1
      color = red
      letterHeight = 0.015
      pos = (0, 0.22)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $show_false_1
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    TextComponent Q2
      letterHeight = 0.02
      pos = (0, 0.17)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2. On some days you find more mushrooms in the nearby fields to base your estimate on than on other days:
      units = height
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    SliderComponent test_Q2
      color = white
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      labels = ('True', 'False')
      letterHeight = 0.015
      pos = (0, 0.13)
      saveStartStop = False
      size = (0.17, 0.015)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2)
      units = height
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    TextComponent wrong_answer_2
      color = red
      letterHeight = 0.015
      pos = (0, 0.09)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $show_false_2
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    TextComponent Q3
      letterHeight = 0.02
      pos = (0, 0.03)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3. If you just saw 4 blue mushrooms and 3 red mushrooms in the nearby fields, how many out of 100 mushrooms in the forest would probably be blue?
      units = height
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    SliderComponent test_Q3
      color = White
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = ('Around 4, because I just\nsaw 4 blue mushrooms', 'More than 4, because there\nare more mushrooms in the\nforest than in the fields ')
      letterHeight = 0.015
      pos = (0, -0.02)
      saveStartStop = False
      size = (0.3, 0.015)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2)
      units = height
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    TextComponent wrong_answer_3
      color = red
      letterHeight = 0.015
      pos = (0, -0.10)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $show_false_3
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    TextComponent Q4
      letterHeight = 0.02
      pos = (0, -0.16)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4. If you estimate that there are 70 blue and 30 red mushrooms in the forest, what is the optimal number of BLUE pickers to send out?
      units = height
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    SliderComponent test_Q4
      color = White
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = ('30', '50', '70')
      letterHeight = 0.015
      pos = (0, -0.21)
      saveStartStop = False
      size = (0.3, 0.015)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3)
      units = height
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    TextComponent wrong_answer_4
      color = red
      letterHeight = 0.015
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $show_false_4
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    TextComponent Q5
      letterHeight = 0.02
      pos = (0, -0.31)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 5. If on day 1 you sample 7 mushrooms in the nearby fields and on day 2 you sample 37 mushrooms, on which day could you be more confident that the sample is a good representative of the number of blue and red mushrooms in the forest? 
      units = height
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    SliderComponent test_Q5
      color = White
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = ('Day 1', 'Day 2')
      letterHeight = 0.015
      pos = (0, -0.36)
      saveStartStop = False
      size = (0.17, 0.015)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2)
      units = height
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    TextComponent wrong_answer_5
      color = red
      letterHeight = 0.015
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $show_false_5
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    TextComponent enter_2
      letterHeight = 0.03
      pos = (0, -0.44)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $show_enter
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    ImageComponent blue_mushroom_5
      flipHoriz = True
      image = blue_mushroom.png
      ori = 350
      pos [set every repeat] = (window_x-0.3, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent red_mushroom_5
      image = red_mushroom.png
      ori = 10
      pos [set every repeat] = (window_x-0.2, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine instr_questionnaire
    KeyboardComponent response_2
      allowedKeys =  'return', 'num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
      End Routine:
        #win.getMovieFrame()
        #name = "instrPractice_{age}.png".format(age = currentPr)
        #win.saveMovieFrames(name)
    TextComponent text_5
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        PART 1: PERSONALITY QUESTIONNAIRE


        You will see a list with 16 personality traits.
        Please select the 2 traits that characterize you the most.

        After you have selected 2 traits, you can continue with the next part of the study.

        Please take your time to read through the personality traits carefully.


        Press ENTER to continue
  Routine personality_statements
    TextComponent header_statements
      letterHeight = 0.032
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please select the 2 personality traits that characterize you the most:
      units = height
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    TextComponent statements_left
      letterHeight = 0.026
      pos = (-0.27, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Active


        Organized


        Energetic


        Responsible


        Outgoing


        Dependable


        Outspoken


        Efficient
    MouseComponent mouse_3
      clickable = box_1, box_2, box_3, box_4, box_5, box_6, box_7, box_8, box_9, box_10, box_11, box_12, box_13, box_14, box_15, box_16
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_14
      Code Type = Both
      Begin JS Routine:
        statements_left.setAlignHoriz('left');
        statements_right.setAlignHoriz('left');

        checkboxes = [box_1, box_2, box_3, box_4, box_5, box_6, box_7, box_8, box_9, box_10, box_11, box_12, box_13, box_14, box_15, box_16];
        clicked = [];
        for (var box, _pj_c = 0, _pj_a = checkboxes, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            box = _pj_a[_pj_c];
            box.setFillColor(new util.Color([1,1,1]));
        }
        bufferTime = 0.1;
        clickClock = new util.Clock();
        lastClickTime = 0;
      Begin Routine:
        # js:statements_left.setAlignHoriz('left')
        statements_left.alignText = 'left'
        statements_right.alignText = 'left'

        # prepare tickboxes
        checkboxes = [box_1, box_2, box_3, box_4, box_5, box_6, box_7, box_8, box_9, box_10, box_11, box_12, box_13, box_14, box_15, box_16]
        clicked = []

        for box in checkboxes:
            box.fillColor = "white"

        # so the checkbox doesnt flicker.
        bufferTime=.1
        clickClock=core.Clock()
        lastClickTime = 0
      Each Frame:
        # record key presses
        keys = event.getKeys()

        # change color of tickboxes depending on clicks
        for box in checkboxes:
            if mouse_3.isPressedIn(box):
                thisClickTime = clickClock.getTime()
                if (thisClickTime - lastClickTime) > bufferTime:
                    if box.name not in clicked:
                        box.fillColor = "red"
                        clicked.append(box.name)
                    elif box.name in clicked:
                        box.fillColor = "white"
                        clicked.remove(box.name)
                lastClickTime = thisClickTime

        # check how many boxes are selected
        selected_text = ""
        if len(clicked) > 2:
            selected_text = "**You have selected more than 2 traits**\nPlease deselect 1 trait"
        elif len(clicked) == 2:
            selected_text = "**Press ENTER to submit your selection**"
            if ('return' in keys or 'num_enter'in keys):
                continueRoutine = False # end now
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        for (var box, _pj_c = 0, _pj_a = checkboxes, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            box = _pj_a[_pj_c];
            if (mouse_3.isPressedIn(box)) {
                var thisClickTime = clickClock.getTime();
                if (((thisClickTime - lastClickTime) > bufferTime)) {
                    if ((! _pj.in_es6(box.name, clicked))) {
                        box.setFillColor(new util.Color([1,0,0]));
                        clicked.append(box.name);
                    } else {
                        if (_pj.in_es6(box.name, clicked)) {
                            box.setFillColor(new util.Color([1,1,1]));
                            clicked.splice(clicked.indexOf(box.name),1);
                        }
                    }
                }
                lastClickTime = thisClickTime;
            }
        }
        selected_text = "";
        if ((clicked.length > 2)) {
            selected_text = "**You have selected more than 2 traits**\nPlease deselect 1 trait";
        } else {
            if ((clicked.length === 2)) {
                selected_text = "**Press ENTER to submit your selection**";
                if ((_pj.in_es6("return", keys) || _pj.in_es6("num_enter", keys))) {
                    continueRoutine = false;
                }
            }
        }
    PolygonComponent box_1
      fillColor = white
      pos = (-0.3, 0.301)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_2
      fillColor = white
      pos = (-0.3, 0.215)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_3
      fillColor = white
      pos = (-0.3, 0.129)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_4
      fillColor = white
      pos = (-0.3, 0.043)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_5
      fillColor = white
      pos = (-0.3, -0.042)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_6
      fillColor = white
      pos = (-0.3, -0.128)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_7
      fillColor = white
      pos = (-0.3, -0.214)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_8
      fillColor = white
      pos = (-0.3, -0.300)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent statements_right
      letterHeight = 0.026
      pos = (0.18, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Sympathetic


        Imaginative


        Kind


        Insightful


        Affectionate


        Curious


        Warm


        Artistic
    PolygonComponent box_9
      fillColor = white
      pos = (0.15, 0.301)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_10
      fillColor = white
      pos = (0.15, 0.215)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_11
      fillColor = white
      pos = (0.15, 0.129)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_12
      fillColor = white
      pos = (0.15, 0.043)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_13
      fillColor = white
      pos = (0.15, -0.042)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_14
      fillColor = white
      pos = (0.15, -0.128)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_15
      fillColor = white
      pos = (0.15, -0.214)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_16
      fillColor = white
      pos = (0.15, -0.300)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent enter_3
      letterHeight = 0.0235
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $selected_text
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  Routine feedback_traits
    CodeComponent code_15
      Code Type = Both
      Begin JS Routine:
        clicked = clicked.join('_');
        trait_numbers = function () {
            var _pj_a = [], _pj_b = clicked.split("_");
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var s = _pj_b[_pj_c];
                if (Number.isInteger(Number.parseInt(s))) {
                    _pj_a.push(Number.parseInt(s));
                }
            }
            return _pj_a;
        }
        .call(this);
        trait_numbers = function () {
            var _pj_a = [], _pj_b = trait_numbers;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var x = _pj_b[_pj_c];
                _pj_a.push((x - 1));
            }
            return _pj_a;
        }
        .call(this);
        trait_list = ["Active", "Organized", "Energetic", "Responsible", "Outgoing", "Dependable", "Outspoken", "Efficient", "Sympathetic", "Imaginative", "Kind", "Insightful", "Affectionate", "Curious", "Warm", "Artistic"];
        trait_1 = trait_list[trait_numbers[0]];
        trait_2 = trait_list[trait_numbers[1]];
        fb1 = "According to your selection, the traits that characterize you the most are:\n\n";
        fb2 = " and ";
        fb3 = "\n\n\n\n\n\n\n\n\nPress ENTER to continue with the next part of the study.";
        fb = ((((fb1 + trait_1) + fb2) + trait_2) + fb3);
        expInfo["traits"] = trait_1 + " " + trait_2;
      Begin Routine:
        clicked = '_'.join(clicked)
        trait_numbers = [int(s) for s in clicked.split("_") if s.isdigit()]
        trait_numbers = [x - 1 for x in trait_numbers]

        trait_list = [
            "Active",
            "Organized",
            "Energetic",
            "Responsible",
            "Outgoing",
            "Dependable",
            "Outspoken",
            "Efficient",
            "Sympathetic",
            "Imaginative",
            "Kind",
            "Insightful",
            "Affectionate",
            "Curious",
            "Warm",
            "Artistic"]

        trait_1 = trait_list[trait_numbers[0]]
        trait_2 = trait_list[trait_numbers[1]]


        fb1 = "According to your selection, the traits that characterize you the most are:\n\n"
        fb2 = " and "
        fb3 = "\n\n\n\n\n\n\n\n\nPress ENTER to continue with the next part of the study."

        fb = fb1 + trait_1 + fb2 + trait_2 + fb3

        expInfo['traits'] = " ".join([trait_1, trait_2])
    TextComponent fb_text
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $fb
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    KeyboardComponent key_resp_4
      allowedKeys = 'return','num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setup
  LoopInitiator loop_informedConsent loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 200
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    Routine informedConsent
  LoopTerminator loop_informedConsent
  Routine instr_questionnaire
  Routine personality_statements
  Routine feedback_traits
  LoopInitiator loop_instrPrac loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 200
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    Routine instrPrac
  LoopTerminator loop_instrPrac
  LoopInitiator loop_prTrials loopType="TrialHandler"
    Selected rows = $selected_practice_trials
    conditionsFile = trial_structure.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('nTotal', 5), ('trueRatio', 0.0), ('givenRatio', 0.0)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.125), ('givenRatio', 0.125)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.25), ('givenRatio', 0.25)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.375), ('givenRatio', 0.375)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.5), ('givenRatio', 0.5)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.625), ('givenRatio', 0.625)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.75), ('givenRatio', 0.75)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.875), ('givenRatio', 0.875)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 1.0), ('givenRatio', 1.0)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.0), ('givenRatio', 0.0)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.125), ('givenRatio', 0.125)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.25), ('givenRatio', 0.25)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.375), ('givenRatio', 0.375)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.5), ('givenRatio', 0.5)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.625), ('givenRatio', 0.625)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.75), ('givenRatio', 0.75)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.875), ('givenRatio', 0.875)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 1.0), ('givenRatio', 1.0)]),
      OrderedDict([('nTotal', 45), ('trueRatio', 0.0), ('givenRatio', 0.0)]),
      OrderedDict([('nTotal', 45), ('trueRatio', 0.125), ('givenRatio', 0.125)])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
    Routine setupSamples
    Routine crossHair
    LoopInitiator loop_prSamples loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 5
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      Routine mushroomSample
      Routine ISI
    LoopTerminator loop_prSamples
    Routine firstEstimation
  LoopTerminator loop_prTrials
  Routine test_questions
  LoopInitiator loop_instr loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 200
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    Routine instructions
  LoopTerminator loop_instr
  LoopInitiator loop_trials loopType="TrialHandler"
    Selected rows = $selected_trials
    conditionsFile = trial_structure.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('nTotal', 5), ('trueRatio', 0.0), ('givenRatio', 0.0)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.125), ('givenRatio', 0.125)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.25), ('givenRatio', 0.25)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.375), ('givenRatio', 0.375)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.5), ('givenRatio', 0.5)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.625), ('givenRatio', 0.625)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.75), ('givenRatio', 0.75)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.875), ('givenRatio', 0.875)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 1.0), ('givenRatio', 1.0)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.0), ('givenRatio', 0.0)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.125), ('givenRatio', 0.125)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.25), ('givenRatio', 0.25)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.375), ('givenRatio', 0.375)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.5), ('givenRatio', 0.5)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.625), ('givenRatio', 0.625)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.75), ('givenRatio', 0.75)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.875), ('givenRatio', 0.875)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 1.0), ('givenRatio', 1.0)]),
      OrderedDict([('nTotal', 45), ('trueRatio', 0.0), ('givenRatio', 0.0)]),
      OrderedDict([('nTotal', 45), ('trueRatio', 0.125), ('givenRatio', 0.125)])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
    Routine setupSamples
    Routine crossHair
    LoopInitiator loop_samples loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 5
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      Routine mushroomSample
      Routine ISI
    LoopTerminator loop_samples
    Routine firstEstimation
    Routine pause
  LoopTerminator loop_trials
  Routine instrBonus
  Routine comments
  Routine instrEnd
