PsychoPy2experiment version="2021.1.4"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=32B6D3BE
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['low_peerConfidence.png', 'medium_peerConfidence.png', 'high_peerConfidence.png', 'wave1_input_confidence.csv']
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1805, 1203]
  expName = mushroom_task
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Routines
  Routine setupSamples
    CodeComponent set_up_samples
      Code Type = Both
      Begin JS Experiment:
        var trials_parameters;
      Begin JS Routine:
        if (startGame === 0) {
            trials_parameters = loop_prTrials;
            loop_prTrials._autoLog = false;
        } else if (startGame === 1) {
            trials_parameters = loop_trials;
            loop_trials._autoLog = false;
        }

        thisIndex = trials_parameters._snapshots[trial_index]["thisIndex"];
        nTotal = trials_parameters._trialList[thisIndex]["nTotal"];
        true_ratio = trials_parameters._trialList[thisIndex]["trueRatio"];
        given_ratio = trials_parameters._trialList[thisIndex]["trueRatio"];
        filler_trial = trials_parameters._trialList[thisIndex]["fillerTrial"];

        nSamples = 5;

        // create matrix that specifies the number of observations per sample
        nObservations = function () {
            var _pj_a = [], _pj_b = range(nSamples, 0);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var iSample = _pj_b[_pj_c];
                _pj_a.push(0);
            }
            return _pj_a;
        }
        .call(this);

        nLeft = nTotal;
        for (var iSample = 1, _pj_a = (nSamples + 1); (iSample < _pj_a); iSample += 1) {
            var xmin = ((- 1) * (((nSamples - iSample) * 9) - nLeft));
            xmin = Math.max(1, xmin);
            var xmax = ((- 1) * (((nSamples - iSample) * 1) - nLeft));
            xmax = Math.min(9, xmax);
            var x = randint(xmin, xmax + 1);
            nLeft = (nLeft - x);
            nObservations[(iSample - 1)] = x;
        }


        // Now create the randomized list with the actual observations to show
        nBlue = round((given_ratio * nTotal));
        seen_ratio = nBlue / nTotal;
        nRed = (nTotal - nBlue);
        itemList = ["blue", "red"];

        var repeat = (values, counts) => values.flatMap((v, i) => Array(counts[i]).fill(v)),
            itemList = repeat(itemList,[nBlue, nRed])
        shuffle(itemList);

        // Based on the shuffled list with 'red' and 'blue', define how many red's and blue's are in each sample.
        start = 0;
        blue = function () {
            var _pj_a = [], _pj_b = range(nSamples);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var iSample = _pj_b[_pj_c];
                _pj_a.push(0);
            }
            return _pj_a;
        }
        .call(this);

        red = function () {
            var _pj_a = [], _pj_b = range(nSamples);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var iSample = _pj_b[_pj_c];
                _pj_a.push(0);
            }
            return _pj_a;
        }
        .call(this);
        for (var iSample = 0, _pj_a = nSamples; (iSample < _pj_a); iSample += 1) {
            blue[iSample] = itemList.slice(start, (start + nObservations[iSample])).filter(element  => element == "blue").length
            red[iSample] = itemList.slice(start, (start + nObservations[iSample])).filter(element  => element == "red").length
            start = (start + nObservations[iSample]);
        }
      Begin Routine:
        # retrieved from file
        if startGame == 0:
            nTotal = thisLoop_prTrial['nTotal']
            true_ratio = thisLoop_prTrial['trueRatio']
            given_ratio = thisLoop_prTrial['trueRatio']
            filler_trial = thisLoop_prTrial['fillerTrial']
        elif startGame == 1:
            nTotal = thisLoop_trial['nTotal']
            true_ratio = thisLoop_trial['trueRatio']
            given_ratio = thisLoop_trial['trueRatio']
            filler_trial = thisLoop_Trial['fillerTrial']
        nSamples = 5

        # create matrix that specifies the number of observations per sample
        nObservations = [0 for iSample in range(nSamples)]
        nLeft = nTotal
        for iSample in range(1,nSamples+1): # +1 to correct for 0-indexing in Python
            xmin = -1*((nSamples-iSample)*9-nLeft)  # nLeft-x <= (nSamples-iSample)x9, with 5 for number of total samples, 9 for max observations per sample in general.
            xmin = max(1,xmin) # xmin is either 1, or a higher minimum based on how many observations and samples still need to be shown
            xmax = -1*((nSamples-iSample)*1-nLeft) # nLeft-x >= (nSamples-iSample)x1, with 5 for number of total samples, 1 for min observations per sample in general.
            xmax = min(9,xmax) # xmax is either 9, or a lower maximum based on how many observations and samples still need to be shown
            toChooseFrom = [*range(xmin, xmax+1)] # +1 because python reads 'up to but not including xmax'
            x = sample(toChooseFrom,1)[0] # sample returns list; convert list to integer
            nLeft = nLeft - x
            nObservations[iSample-1] = x

        # Now create the randomized list with the actual observations to show
        nBlue = round(given_ratio * nTotal)
        seen_ratio = nBlue / nTotal
        nRed = nTotal - nBlue
        itemList = np.array(["blue", "red"])
        itemList = np.repeat(itemList, [nBlue, nRed])
        random.shuffle(itemList)

        # Based on the shuffled list with 'red' and 'blue', define how many red's and blue's are in each sample.
        start = 0
        blue = [0 for iSample in range(nSamples)]
        red = [0 for iSample in range(nSamples)]
        for iSample in range(nSamples):
          blue[iSample] = sum(itemList[start:(start+nObservations[iSample])]=="blue")
          red[iSample] = sum(itemList[start:(start+nObservations[iSample])]=="red")
          start = start + nObservations[iSample]
      End JS Routine:
        sample_index = 0;
      End Routine:
        sample_index = 0
  Routine crossHair
    TextComponent cross_hair
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = crosshair_ITI
      text = +
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        crosshair_ITI = Math.floor(((Math.random() * (2.1 - 1.5)) + 1.5)* 10) / 10;
        document.body.style.cursor='none';
      Begin Routine:
        crosshair_ITI = round(random.random() * (2.0 - 1.5) + 1.5, 1)
      End Routine:
        #win.getMovieFrame()
        #win.saveMovieFrames('crosshair.png')
  Routine mushroomSample
    TextComponent text_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        S = ["blue", "red"];
        var repeat = (values, counts) => values.flatMap((v, i) => Array(counts[i]).fill(v)),
            S = repeat(S,[blue[sample_index], red[sample_index]])

        ok = 0;
        while ((ok === 0)) {
            var coor_x = [];
            while(coor_x.length < nObservations[sample_index]){
                var r =((Math.random() * (aperture_size - (- aperture_size))) + (- aperture_size));
                if(coor_x.indexOf(r) === -1) coor_x.push(r);
            }
            var coor_y = [];
            while(coor_y.length < nObservations[sample_index]){
                var r =((Math.random() * (aperture_size - (- aperture_size))) + (- aperture_size));
                if(coor_y.indexOf(r) === -1) coor_y.push(r);
            }
            var diff_x = allAbsDifferences(coor_x, coor_x.length);
            var diff_y = allAbsDifferences(coor_y, coor_y.length);
            var match;
            var tooClose_xy = [];
            for(var el = 0; el < diff_x.length; el++) {
                match = 0;
                if (diff_x[el] <= (mushroom_size * 0.9) && diff_y[el] <= (mushroom_size * 0.9)) {
                    match = 1;
                }
                tooClose_xy.push(match);
            }
            if (tooClose_xy.every(x => x == 0)) {
                ok = 1;
            }
        }

        if ((red[sample_index] > 0)) {
            red_mushrooms = function () {
            var _pj_a = [], _pj_b = range(red[sample_index]);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(new visual.ImageStim({
                    win: psychoJS.window,
                    name: "red_mushrooms", image: "red_mushroom.png",
                    pos: [coor_x[i], coor_y[i]], size: [mushroom_size, mushroom_size],
                    }));
            }
            return _pj_a;
            }
            red_mushrooms = red_mushrooms();
            for (var i, _pj_c = 0, _pj_a = red_mushrooms, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                i.setAutoDraw(true);
            }
        }


        if ((blue[sample_index] > 0)) {
            blue_mushrooms = function () {
            var _pj_a = [], _pj_b = range(blue[sample_index], red[sample_index]);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(new visual.ImageStim({
                    win: psychoJS.window,
                    name: "blue_mushrooms", image: "blue_mushroom.png",
                    pos: [coor_x[i], coor_y[i]], size: [mushroom_size, mushroom_size],
                    }));
            }
            return _pj_a;
            }
            blue_mushrooms = blue_mushrooms();
            for (var i, _pj_c = 0, _pj_a = blue_mushrooms, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                i.draw();
            }
        }
      Begin Routine:
        # At the start of each sample, create a matrix with x and y coordinates of stimuli on screen
        S = np.array(["blue", "red"])
        # item = thisLoop_sample['item']
        S = np.repeat(S, [blue[sample_index], red[sample_index]])
        ok = 0
        while ok == 0:
            coor_x = np.array(random.uniform(-aperture_size,aperture_size, nObservations[sample_index]))
            coor_y = np.array(random.uniform(-aperture_size,aperture_size, nObservations[sample_index]))
            diff_x = abs(coor_x[:, None] - coor_x)
            diff_y = abs(coor_y[:, None] - coor_y)
            # check if there is a pair for which both x and y coordinates overlap. If so, resample coordinates
            tooClose = (diff_x <= mushroom_size*0.9) & (diff_y <= mushroom_size*0.9)
            if (np.triu(tooClose, k=1)==False).all(): # only take into account upper triangle to get rid of diagonal which is always 0/True.
                ok = 1

        # initialize mushroom images
        if red[sample_index] > 0:
            red_mushrooms = [visual.ImageStim(
                win=win,
                name='red_mushrooms',
                image='red_mushroom.png', mask=None,
                ori=0.0, pos=(coor_x[i], coor_y[i]), size=[mushroom_size],
                color=[1,1,1], colorSpace='rgb', opacity=None,
                flipHoriz=False, flipVert=False,
                texRes=128.0, interpolate=True, depth=0.0)
               for i in range(red[sample_index])]
            for i in red_mushrooms:
                i.autoDraw = True
        if blue[sample_index] > 0:
            blue_mushrooms = [visual.ImageStim(
                win=win,
                name='blue_mushrooms',
                image='blue_mushroom.png', mask=None,
                ori=0.0, pos=(coor_x[i], coor_y[i]), size=[mushroom_size],
                color=[1,1,1], colorSpace='rgb', opacity=None,
                flipHoriz=False, flipVert=False,
                texRes=128.0, interpolate=True, depth=0.0)
               for i in range(red[sample_index],red[sample_index]+blue[sample_index])]
            for i in blue_mushrooms:
                i.setAutoDraw(True)

        #win.getMovieFrame()
        #name = "sample_{age}.png".format(age = sample_index)
        #win.saveMovieFrames(name)
      Each Frame:
        if t < 1.2:
            continueRoutine = True
        else:
            continueRoutine = False
      End JS Routine:
        if ((red[sample_index] > 0)) {
            for (var i, _pj_c = 0, _pj_a = red_mushrooms, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                i.setAutoDraw(false);
            }
        }
        if ((blue[sample_index] > 0)) {
            for (var i, _pj_c = 0, _pj_a = blue_mushrooms, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                i.setAutoDraw(false);
            }
        }

        sample_index = (sample_index + 1);
      End Routine:
        if red[sample_index] > 0:
            for i in red_mushrooms:
                i.setAutoDraw(False)

        if blue[sample_index] > 0:
            for i in blue_mushrooms:
                i.setAutoDraw(False)

        sample_index = sample_index + 1
  Routine firstEstimation
    CodeComponent when_to_continue
      Code Type = Both
      Begin JS Routine:
        event.clearEvents();
        document.body.style.cursor='auto';

        //estimation_slider_1.markerPos = 50; // in slider units
        //markerPosition_1 = 0; // in height units
        //blueRectangle_1_pos = -0.125;
        //blueRectangle_1_size = 0.25;
        //show_estimate_1_text = " ";


        //estimation_slider_1._opacity = 0;
        sliderfont = "Helvetica";


        //textbox parameters
        estimate1_textbox._multiline = false;
        estimate1_textbox._needPixiUpdate = true; // autofocus
        estimate1_textbox._needUpdate = true; // autofocus at repeat

        tooLate = 0;
      Begin Routine:
        event.clearEvents()

        #estimation_slider_1.markerPos = 50
        #markerPosition_1 = 0
        #blueRectangle_1_pos = -0.125
        #blueRectangle_1_size = 0.25
        #show_estimate_1_text = ''


        #slider_opacity = 0
        sliderfont = "Open Sans"

        tooLate = 0
      Each Frame:
        keys = event.getKeys()

        # need to manually check for escape, as our key checking will interfere with
        # Builder's escape check:
        if 'escape' in keys:
            core.quit()

        # check if participant is too late
        if t > 10:
            if startGame==1:
                n_tooLate = n_tooLate + 1
            tooLate = 1
            continueRoutine = False


        # important: type a single space in the textbox field, otherwise it gives an error.
        # check if estimate is within 1-100
        invalid = False
        invalid_input = ""
        if len(estimate1_textbox.text) > 0 and estimate1_textbox.text != " ":
            try:
                int(estimate1_textbox.text)
            except ValueError:
                invalid = True
                invalid_input = "*invalid input\n(needs to be numerical with range 18-45)"
            if invalid == False:
                if int(estimate1_textbox.text) < 0 or int(estimate1_textbox.text) > 100:
                    invalid = True
                    invalid_input = "*invalid input\n(needs to be numerical with range 1-100)"


        # check if rating has been completed:
        pressENTER = ""
        if len(estimate1_textbox.text) > 0 and estimate1_textbox.text != " " and invalid == False:
            pressENTER = "Press ENTER to submit your decision"
            if ('return' in keys or 'num_enter' in keys):
                estimate1 = int(estimate1_textbox.text)
                estimate1_rt = t
                continueRoutine = False # end now


        # CODE WHEN USING ACTUAL SLIDER
        # move slider colors along with response
        #markerPos_1 = -1
        #if estimation_slider_1.markerPos is not None:
        #     markerPos_1 = estimation_slider_1.markerPos
        #     markerPosition_1 = (markerPos_1 - 50) / 200
        #     show_estimate_1_text = int(markerPos)
        #     blue_rectangle_1_pos = -0.25 + markerPos_1/200/2
        #     blue_rectangle_1_size = markerPos_1/200

        # check if rating has been completed:
        #rating_completed = 0
        #if estimation_slider_1.getRating() is not None:
        #    rating_completed = 1

        #if ('return' in keys or 'num_enter' in keys) and rating_completed == 1:
        #    continueRoutine = False # end now
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();

        // check if participant is too late
        if (t > 10){
            if (startGame===1){
                n_tooLate = n_tooLate + 1;
            }
            tooLate = 1;
            continueRoutine = false;
        }


        // check if estimate is within 1-100
        invalid = false;
        invalid_input = "";
        if (((estimate1_textbox.text.length > 0) && (estimate1_textbox.text !== " "))) {
            if ((isNaN(Number.parseInt(estimate1_textbox.text)))) {
                invalid = true;
                invalid_input = "*invalid input\n(needs to be numerical with range 1-100)";
            }
            if ((invalid === false)) {
                if (((Number.parseInt(estimate1_textbox.text) < 0) || (Number.parseInt(estimate1_textbox.text) > 100))) {
                    invalid = true;
                    invalid_input = "*invalid input\n(needs to be numerical with range 1-100)";
                }
            }
        }


        // check if rating has been completed:
        pressENTER = "";
        if ((((estimate1_textbox.text.length > 0) && (estimate1_textbox.text !== " ")) && (invalid === false))) {
            pressENTER = "Press ENTER to submit your decision";
            if (_pj.in_es6("return", keys) || _pj.in_es6("num_enter", keys)){
                estimate1 = Number.parseInt(estimate1_textbox.text);
                estimate1_rt = t;
                continueRoutine = false;
            }
        }


        // CODE WHEN USING ACTUAL SLIDER
        // move slider along with response
        //markerPos_1 = -1
        //if ((estimation_slider_1.markerPos !== undefined)) {
        //    markerPos_1 = estimation_slider_1.markerPos;
        //    markerPosition_1 = (markerPos_1 - 50) / 200;
        //    blueRectangle_1_pos = ((- 0.25) + ((markerPos_1 / 200) / 2));
        //    blueRectangle_1_size = markerPos_1 / 200;
        //    show_estimate_1_text = Number.parseInt(markerPosition_1*200+50);
        //}


        //rating_completed = 0;
        //if ((estimation_slider_1.getRating() !== undefined)) {
        //    rating_completed = 1;
        //}
        //if (((_pj.in_es6("return", keys) || _pj.in_es6("num_enter", keys)) && (rating_completed === 1))) {
        //    estimation_slider_1.markerPos = undefined;
        //    markerPosition_1 = 0;
        //    show_estimate_1_text = " ";
        //    blueRectangle_1_pos = - 0.125;
        //    blueRectangle_1_size = 0.25;
        //    continueRoutine = false;
        //}
      End JS Routine:
        if (tooLate === 0){
            deviance = estimate1 - true_ratio * 100;
            abs_deviance = Math.abs(deviance);
        }

        if ((startGame === 1)) {
            psychoJS.experiment.addData("cross_hair.ITI", crosshair_ITI);
            psychoJS.experiment.addData("seen_ratio", seen_ratio);
            psychoJS.experiment.addData("nMushrooms", String(nObservations));
            psychoJS.experiment.addData("nBlue", String(blue));
            psychoJS.experiment.addData("nRed", String(red));
            if (tooLate === 0){
                list_deviance.push(abs_deviance);
                psychoJS.experiment.addData("estimation1.rating", estimate1);
                psychoJS.experiment.addData("estimation1.rt", estimate1_rt);
            }
        }
      End Routine:
        #win.getMovieFrame()
        #win.saveMovieFrames('response.png')

        # performance
        if tooLate == 0:
            deviance = estimate1 - true_ratio*100
            abs_deviance = abs(deviance)

        # only save data during actual task, not practice
        if startGame == 1:
            loop_trials.addData('cross_hair.ITI', crosshair_ITI)
            loop_trials.addData('seen_ratio', seen_ratio)
            loop_trials.addData('nMushrooms', " ".join(map(str, nObservations)))
            loop_trials.addData('nBlue', " ".join(map(str, blue)))
            loop_trials.addData('nRed', " ".join(map(str, red)))
            if tooLate == 0:
                list_deviance.append(abs_deviance)
                loop_trials.addData('estimation1.rating', estimate1)
                loop_trials.addData('estimation1.rt', estimate1_rt)
    TextComponent how_many_mushrooms
      font = $sliderfont
      letterHeight = 0.032
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0
      units = height
      wrapWidth = 0.8
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      text:
        Based on the sample you just saw, how many out of 100 mushroom pickers should carry a BLUE bag today?
    TextComponent your_estimate
      font = $sliderfont
      letterHeight = 0.025
      pos = (0, -0.16)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Your decision:
      wrapWidth = 0.8
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    TextboxComponent estimate1_textbox
      anchor = top-left
      bold = True
      color = Black
      editable = True
      fillColor = White
      font = $sliderfont
      letterHeight = 0.035
      padding = 0.005
      pos = (-0.035, -0.19)
      saveStartStop = False
      size = [0.07, 0.045]
      startVal [time (s)] = 0
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    TextComponent text_invalid_input
      color = red
      font = $sliderfont
      letterHeight = 0.015
      pos = (0, -0.26)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $invalid_input
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    TextComponent space_to_submit_estimation
      font = $sliderfont
      letterHeight = 0.025
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $pressENTER
      units = height
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  Routine informedConsent
    CodeComponent informedConsent_code
      Code Type = Auto->JS
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      Begin Experiment:
        IC1 = ("Dear participant,\n\nFirst, thank you for your interest!\nBefore the study starts, it is important that you are informed about the procedures. "
        "Therefore, we would like you to read this information letter carefully.\nPlease do not hesitate to ask for clarification about this text or the general procedure. "
        "If anything is unclear, the researcher will answer your questions.\n\n\n"
        "You can go back and forth through the instructions by pressing the LEFT and RIGHT arrow keys.\n\n\n"
        "Now press the RIGHT arrow key to move on to the next instruction.")

        IC2 = ("Type of Research:\n\nYou will participate in an online estimation study.\n\nThe study will start with a short personality questionnaire, followed by an estimation game. This will take approximately 30 minutes in total.\n\n\n"
        "Please ensure you are not disturbed in the coming 30 minutes:\n"
        "The estimation game has a maximum response time. If you fail to respond within the time window too many times, "
        "the experiment will be terminated automatically and you will not receive your payment.")

        IC3 = ("Voluntary participation:\n\nThere are no consequences if you decide not to participate in this study.\n"
        "During the study, you are free to stop participating at any moment, without giving a reason for doing so.\n"
        "Within seven days after participation, you are allowed to withdraw your data from this study and your data will be deleted permanently.")

        IC4 = ("Your privacy is guaranteed:\n\n"
        "Your personal information (about who you are) remains confidential and will not be shared without your explicit consent.\n"
        "Your research data will be analyzed by the researchers who collected the information. "
        "Research data published in scientific journals will be anonymous and cannot be traced back to you as an individual. "
        "Completely anonymized data can be shared with other researchers.")

        IC5 = ("Discomfort, risks and insurance:\n\n"
        "As with any research at the University of Amsterdam (UvA), a standard liability insurance applies.\n\n\n\n\n"
        "Compensation:\n\nA flat fee of £3.75 upon completion of the study, plus a bonus of up to £1.50 depending on your performance in the estimation game.")

        IC6 = ("Further information:\n\nShould you have questions about this study at any given moment, please contact the responsible researcher,\n"
        "Lieke Hofmans (l.hofmans@uva.nl).\n\nFormal complaints about this study can be addressed to the Ethics Review Board, "
        "Helle Larsen (h.larsen@uva.nl).")

        IC7 = ("Informed consent:\n\nBy pressing ENTER you register you give informed consent:\n"
        "You are well informed, have read the aforementioned information carefully, and wish to start the study.\n\n\n"
        "If you wish to go over the information once more, you can use the LEFT and RIGHT arrow keys to go back and forth.\n\n"
        "If you do not wish to start the study, you can leave the study now.")

        ICDict = { "1": IC1,
                      "2": IC2,
                      "3": IC3,
                      "4": IC4,
                      "5": IC5,
                      "6": IC6,
                      "7": IC7,
        }

        currentIC = "1"
      Begin Routine:
        event.clearEvents()

        progress_bar_size = (window_x*2)/7 * int(currentIC)
        progress_bar_pos = (-window_x) + (window_x*2)/7 * int(currentIC) / 2
        progress_text = "Informed consent: " + currentIC + "/7"
      End Routine:
        #win.getMovieFrame()
        #name = "informed_consent_{age}.png".format(age = currentIC)
        #win.saveMovieFrames(name)

        if (informed_consent_responses.keys == "return" or informed_consent_responses.keys == "num_enter") and int(currentIC) == 7:
            currentIC = int(currentIC) + 1
        elif informed_consent_responses.keys == "right" and int(currentIC) == 7:
            currentIC = int(currentIC)
        elif informed_consent_responses.keys == "right" and int(currentIC) != 7:
            currentIC = int(currentIC) + 1
        elif informed_consent_responses.keys == "left":
            currentIC = int(currentIC) - 1

        if currentIC == 0:
            currentIC = 1  # can't go lower than
        elif currentIC == 8:
            loop_informedConsent.finished=True
            expInfo['informedConsent'] = "yes"

        currentIC = str(currentIC)
    TextComponent informed_consent
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $ICDict[currentIC]
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    KeyboardComponent informed_consent_responses
      allowedKeys = 'right', 'left', 'return', 'num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    PolygonComponent progress_bar_fixed
      fillColor = white
      pos [set every repeat] = (0, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_x*2, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent progress_bar
      fillColor = green
      lineColor = green
      pos [set every repeat] = (progress_bar_pos, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (progress_bar_size, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent progress_IC
      color = black
      letterHeight = 0.02
      pos = (0, 0.48)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        $progress_text
  Routine pause
    TextComponent shortBreak
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        Great job!

        You can now take a 3 minute break before we continue with the next part of the season.

        If you wish to continue earlier, you can press ENTER to start immediately.
    CodeComponent code_6
      Code Type = Both
      Begin JS Routine:
        event.clearEvents();

        //nPerLoop = trials_parameters._snapshots[trial_index-1]["nStim"] // when multiple reps
        nPerLoop = 1; // when one large rep, devided into multiple blocks
        if (((((trials_parameters._snapshots[trial_index-1]["thisTrialN"] + 1) % nPerLoop) === 0) && (trials_parameters._snapshots[trial_index-1]["nRemaining"] !== 0))) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }

        if (n_tooLate >= 5){
            continueRoutine = false;
        }
      Begin Routine:
        event.clearEvents()

        # I only want this routine to show at the end of each block.
        #nPerLoop = loop_trials.nTotal / loop_trials.nReps # when multiple reps
        nPerLoop = 18 # when one large rep, devided into multiple blocks
        if (loop_trials.thisN + 1) % nPerLoop == 0 and loop_trials.nRemaining != 0:
            continueRoutine = True
        else:
            continueRoutine = False

        if n_tooLate >= 5:
            continueRoutine = False
      Each Frame:
        timer_text = int(round(180 - t, ndigits = 0))
      Each JS Frame:
        timer_text = Math.floor(180 - t);
      End JS Routine:
        if ((startGame === 1)) {
            if (((((trials_parameters._snapshots[trial_index-1]["thisTrialN"] + 1) % nPerLoop) === 0) && (trials_parameters._snapshots[trial_index-1]["nRemaining"] !== 0))) {
                if ((t > 179)) {
                    psychoJS.experiment.addData("shortBreak.secs", 180);
                } else {
                    psychoJS.experiment.addData("shortBreak.secs", t);
                }
            }
        }
      End Routine:
        if startGame == 1:
            if t > 179:
                loop_trials.addData('shortBreak.secs', 180)
            else:
                loop_trials.addData('shortBreak.secs', t)
    KeyboardComponent key_resp_3
      allowedKeys = 'return', 'num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      store = nothing
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    TextComponent timer
      letterHeight = 0.1
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text [set every frame] = $timer_text
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    ImageComponent blue_mushroom_3
      flipHoriz = True
      image = blue_mushroom.png
      ori = 350
      pos [set every repeat] = (window_x-0.3, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    ImageComponent red_mushroom_3
      image = red_mushroom.png
      ori = 10
      pos [set every repeat] = (window_x-0.2, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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
  Routine instrEnd
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()

        if n_tooLate >= 5:
            continueRoutine = false
      End Routine:
        #win.getMovieFrame()
        #win.saveMovieFrames('end.png')
    TextComponent textFinish
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you very much for participating.

        This screen marks the end of the study.

        ATTENTION: Please click FINISH to finish this study and receive your Prolific code.

        You are reminded that by completing this study, you are agreeing with your participation and the submission of your data.
    KeyboardComponent enterFinish
      allowedKeys = 'return', 'num_enter'
      disabled = True
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent continue_button_2
      image = finish.png
      pos = (0.4, -0.35)
      saveStartStop = False
      size = (0.1, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse_2
      clickable = continue_button_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine setup
    CodeComponent code_start
      Code Type = Both
      Before Experiment:
        import pandas as pd
        from numpy import random
        from random import sample
        from random import shuffle
      Begin Experiment:
        window_dimension = win.size[0] / win.size[1]
        window_y = 0.5
        window_x = window_y * window_dimension
        aperture_size = window_y * 0.4 # size of square where the mushrooms can be shown (in one direction)
        mushroom_size = aperture_size * 0.50 # size of mushroom is 1/10th of screen heigth

        # background color
        bg_color=colors.Color((-0.4000, -0.4000, -0.4000), space='rgb')
        win.color = bg_color
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        shuffle = util.shuffle;
        Array.prototype.append = [].push;

        randint = function(min, maxplusone) {
            return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }

        range = function (size, startAt = 0) {
            return [...Array(size).keys()].map(i => i + startAt);
        }

        sum = function (arr) {
            return arr.reduce((a,b)=>a+b)
        }

        allAbsDifferences = function(arr, N){
            var diff;
            var diff_list = [];
            // Traverse the array
            for(var elementA = 0; elementA < N; elementA++)
            {
                for(var elementB = 0; elementB < N; elementB++)
                {
                    if ((elementA !== elementB)) {
                        diff = Math.abs((arr[elementA] - arr[elementB]));
                        diff_list.push(diff);
                    }
                }
            }
            return diff_list;
        }

        arrayMatch = function(arr1, arr2) {
            var match;
            var match_list = [];
            for (var i = 0; i < arr1.length; i++) {
                match = 0;
                if (arr1[i] == arr2[i]) {
                    match = 1;
                }
                match_list.push(match)
            }
            return match_list;
        }

        // background color
        bg_color= new util.Color([-0.4000, -0.4000, -0.4000])
        win.color = bg_color
      Begin JS Routine:
        // define trial selection
        selected_practice_trials = shuffle(range(42,0));
        selected_practice_trials.length = 1;
        selected_trials = shuffle(range(54,0));
        selected_trials.length = 3;

        // initialize value for too late trials
        n_tooLate = 0;

        test_Q1._skin["STANDARD"]["MARKER_COLOR"] = new util.Color('black') // sets marker color for all sliders
      Begin Routine:
        # define trial selection
        selected_practice_trials = randchoice(42, size = 3, replace = False)
        selected_trials = randchoice(54, size = 54, replace = False)

        # initialize value for too late trials
        n_tooLate = 0
      End JS Routine:
        window_dimension = (win.size[0] / win.size[1]);
        window_y = 0.5;
        window_x = (window_y * window_dimension);
        aperture_size = (window_y * 0.4);
        mushroom_size = (aperture_size * 0.5);
  Routine ISI
    TextComponent isi
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.3
      units = height
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  Routine comments
    TextComponent comments_title
      letterHeight = 0.035
      pos = [0, 0.35]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In order to improve our study we would like to receive some feedback from you!
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    TextComponent comments_instructions
      letterHeight = 0.025
      pos = [0, 0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Were the instructions clear?
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    TextboxComponent input_instructions
      anchor = top-left
      autoLog = False
      bold = False
      color = Black
      editable = True
      fillColor = White
      letterHeight = 0.02
      pos = [-0.3, 0.17]
      saveStartStop = False
      size = [0.6, 0.1]
      startVal [time (s)] = 0.0
      units = height
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    TextComponent comments_other
      letterHeight = 0.025
      pos = [0, -0.05]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Do you have any feedback about the study, such as: Were the tasks easy to understand? Is there anything you liked or disliked about the study?
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    TextboxComponent input_other
      anchor = top-left
      autoLog = False
      bold = False
      color = Black
      editable = True
      fillColor = White
      letterHeight = 0.02
      pos = [-0.3, -0.09]
      saveStartStop = False
      size = [0.6, 0.1]
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent continue_button
      image = continue.png
      pos = (0.4, -0.35)
      saveStartStop = False
      size = (0.1, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse
      clickable = continue_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        if n_tooLate >= 5:
            continueRoutine = False
      End Routine:
        expInfo['instructions_clear'] = input_instructions.text
        expInfo['other_comments'] = input_other.text
  Routine test_questions
    CodeComponent code_11
      Code Type = Both
      Begin JS Routine:
        // only run if phase is 2
        if (practice_phase !== 2) {
            continueRoutine = false;
        }

        progress_bar_size = (((window_x * 2) / 18) * 15);
        progress_bar_pos = ((- window_x) + ((((window_x * 2) / 18) * 15) / 2));

        test_Q1._fontSize = 0.015;
        test_Q1._bold = false;
        test_Q2._fontSize = 0.015;
        test_Q2._bold = false;
        test_Q3._fontSize = 0.015;
        test_Q3._bold = false;
        test_Q4._fontSize = 0.015;
        test_Q4._bold = false;
        test_Q5._fontSize = 0.015;
        test_Q5._bold = false;
      Begin Routine:
        # only run if phase is 2
        if practice_phase is not 2:
            continueRoutine = False


        progress_bar_size = (window_x*2)/18 * 15
        progress_bar_pos = (-window_x) + (window_x*2)/18 * 15 / 2
      Each Frame:
        keys = event.getKeys()

        # need to manually check for escape, as our key checking will interfere with
        # Builder's escape check:
        if 'escape' in keys:
            core.quit()

        # check if questions have been completed correctly:
        rating_completed = 0
        show_false_1 = " "
        show_false_2 = " "
        show_false_3 = " "
        show_false_4 = " "
        show_false_5 = " "

        if test_Q1.getRating() == 2:
            rating_completed = rating_completed + 1
        elif test_Q1.getRating() == 1:
            show_false_1 = "Wrong answer. Please pick another option."

        if test_Q2.getRating() == 2:
            rating_completed = rating_completed + 1
        elif test_Q2.getRating() == 1:
            show_false_2 = "Wrong answer. Please pick another option."

        if test_Q3.getRating() == 1:
            rating_completed = rating_completed + 1
        elif test_Q3.getRating() == 2:
            show_false_3 = "Wrong answer. Please pick another option."

        if test_Q4.getRating() == 2:
            rating_completed = rating_completed + 1
        elif test_Q4.getRating() == 1:
            show_false_4 = "Wrong answer. Please pick another option."

        if test_Q5.getRating() == 1:
            rating_completed = rating_completed + 1
        elif test_Q5.getRating() == 2:
            show_false_5 = "Wrong answer. Please pick another option."

        # show participant that they can press space
        show_enter = ""
        if rating_completed == 5:
            show_enter = "Press ENTER to continue"

        if ('return' in keys or 'num_enter'in keys) and rating_completed == 5:
            continueRoutine = False # end now
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();

        rating_completed = 0;
        show_false_1 = " ";
        show_false_2 = " ";
        show_false_3 = " ";
        show_false_4 = " ";
        show_false_5 = " ";

        if ((test_Q1.getRating() === 2)) {
            rating_completed = (rating_completed + 1);
        } else {
            if ((test_Q1.getRating() === 1)) {
                show_false_1 = "Wrong answer. Please pick another option.";
            }
        }
        if ((test_Q2.getRating() === 2)) {
            rating_completed = (rating_completed + 1);
        } else {
            if ((test_Q2.getRating() === 1)) {
                show_false_2 = "Wrong answer. Please pick another option.";
            }
        }
        if ((test_Q3.getRating() === 1)) {
            rating_completed = (rating_completed + 1);
        } else {
            if ((test_Q3.getRating() === 2)) {
                show_false_3 = "Wrong answer. Please pick another option.";
            }
        }
        if ((test_Q4.getRating() === 2)) {
            rating_completed = (rating_completed + 1);
        } else {
            if ((test_Q4.getRating() === 1)) {
                show_false_4 = "Wrong answer. Please pick another option.";
            }
        }
        if ((test_Q5.getRating() === 1)) {
            rating_completed = (rating_completed + 1);
        } else {
            if ((test_Q5.getRating() === 2)) {
                show_false_5 = "Wrong answer. Please pick another option.";
            }
        }

        show_enter = "";
        if ((rating_completed === 5)) {
            show_enter = "Press ENTER to continue";
        }
        if (((_pj.in_es6("return", keys) || _pj.in_es6("num_enter", keys)) && (rating_completed === 5))) {
            continueRoutine = false;
        }
    PolygonComponent progress_bar_fixed_4
      fillColor = white
      pos [set every repeat] = (0, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_x*2, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent progress_bar_4
      fillColor = green
      lineColor = green
      pos [set every repeat] = (progress_bar_pos, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (progress_bar_size, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent progress_IC_4
      color = black
      letterHeight = 0.02
      pos = (0, 0.48)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Instructions: 9/13
      units = height
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    TextComponent text_4
      letterHeight = 0.03
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You have now finished the practice days. Before we continue, we want to ask you a few questions about your understanding of the game:
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    TextComponent Q1
      letterHeight = 0.02
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1. Each day, the distribution of the blue and red mushrooms is the same:  
      units = height
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    SliderComponent test_Q1
      color = white
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      labels = ('True', 'False')
      letterHeight = 0.015
      pos = (0, 0.26)
      saveStartStop = False
      size = (0.17, 0.015)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2)
      units = height
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    TextComponent wrong_answer_1
      color = red
      letterHeight = 0.015
      pos = (0, 0.22)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $show_false_1
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    TextComponent Q2
      letterHeight = 0.02
      pos = (0, 0.17)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2. If you just saw 4 blue mushrooms and 3 red mushrooms in the nearby fields, how many out of 100 mushrooms in the forest would probably be blue?
      units = height
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    SliderComponent test_Q2
      color = White
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = ('Around 4, because I just\nsaw 4 blue mushrooms', 'More than 4, because there\nare more mushrooms in the\nforest than in the fields ')
      letterHeight = 0.015
      pos = (0, 0.12)
      saveStartStop = False
      size = (0.3, 0.015)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2)
      units = height
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    TextComponent wrong_answer_2
      color = red
      letterHeight = 0.015
      pos = (0, 0.04)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $show_false_2
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    TextComponent Q3
      letterHeight = 0.02
      pos = (0, -0.01)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3. If on day 1 you sample 37 mushrooms in the nearby fields and on day 2 you sample 7 mushrooms, on which day could you be more confident that the sample is a good representative of the number of blue and red mushrooms in the forest? 
      units = height
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    SliderComponent test_Q3
      color = White
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = ('Day 1', 'Day 2')
      letterHeight = 0.015
      pos = (0, -0.06)
      saveStartStop = False
      size = (0.17, 0.015)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2)
      units = height
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    TextComponent wrong_answer_3
      color = red
      letterHeight = 0.015
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $show_false_3
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    TextComponent enter_2
      letterHeight = 0.03
      pos = (0, -0.44)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $show_enter
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    ImageComponent blue_mushroom_5
      flipHoriz = True
      image = blue_mushroom.png
      ori = 350
      pos [set every repeat] = (window_x-0.3, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent red_mushroom_5
      image = red_mushroom.png
      ori = 10
      pos [set every repeat] = (window_x-0.2, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent Q4
      letterHeight = 0.02
      pos = (0, -0.16)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4. The other participant saw the same number of mushrooms in the nearby fields as you did:
      units = height
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    SliderComponent test_Q4
      color = White
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = ('True, always', 'False, not necessarily')
      letterHeight = 0.015
      pos = (0, -0.20)
      saveStartStop = False
      size = (0.17, 0.015)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2)
      units = height
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    TextComponent wrong_answer_4
      color = red
      letterHeight = 0.015
      pos = (0, -0.24)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $show_false_4
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    TextComponent Q5
      letterHeight = 0.02
      pos = (0, -0.29)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 5. The number of blue and red mushrooms in the forest is the same for the other participant and you:
      units = height
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    SliderComponent test_Q5
      color = White
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = ('True', 'False')
      letterHeight = 0.015
      pos = (0, -0.33)
      saveStartStop = False
      size = (0.17, 0.015)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2)
      units = height
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    TextComponent wrong_answer_5
      color = red
      letterHeight = 0.015
      pos = (0, -0.37)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $show_false_5
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  Routine import_wave1_data
    CodeComponent import_data
      Code Type = Both
      Begin JS Routine:
        wave1Data = new TrialHandler({
                psychoJS: psychoJS,
                nReps: 1, method: TrialHandler.Method.SEQUENTIAL,
                extraInfo: expInfo, originPath: undefined,
                trialList: 'wave1_input_confidence.csv',
                seed: undefined, name: 'wave1Data'
            });

        wave1 = wave1Data.getTrialList()


        // make list of all nTotal, ratio levels and confidence levels
        levels_nTotal = [5, 45];
        levels_ratio = [0.125, 0.25, 0.375, 0.5, 0.625, 0.75, 0.875];
        levels_confidence = [1, 2, 3];
        repeat = (values, counts) => values.flatMap((v, i) => Array(counts[i]).fill(v));
        all_nTotals = repeat(levels_nTotal, Array(levels_nTotal.length).fill(levels_ratio.length*levels_confidence.length).flat());
        all_ratios = Array(levels_nTotal.length).fill(repeat(levels_ratio, Array(levels_ratio.length).fill(levels_confidence.length).flat())).flat()


        // create shuffled list of confidence levels for each combination of nTotal and ratio
        all_confidences = [];
        for (var i, _pj_c = 0, _pj_a = levels_nTotal, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            for (var k, _pj_f = 0, _pj_d = levels_ratio, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                k = _pj_d[_pj_f];
                all_confidences.push(...shuffle(levels_confidence));
            }
        }



        // combine nTotal ratio and confidence into one object
        nTotal_ratio_confidence = [];
        for (var i, _pj_c = 0, _pj_a = all_nTotals, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_c;
            nTotal_ratio_confidence[i] = { nTotal: all_nTotals[i], ratio: all_ratios[i], confidence: all_confidences[i] };
        }

        // make list for filler rounds: 8x SI which is closer than 3 percentage points, x SI which is further than 40 percentage points.
        SI_fillers = shuffle([3, 3, 3, 3, 3, 3, 3, 3, 40, 40, 40, 40]);
      Begin Routine:
        wave1Data = data.TrialHandler(nReps=1, method='sequential',
            extraInfo=expInfo, originPath=-1,
            trialList=data.importConditions('wave1_input_confidence.csv'),
            seed=None, name='wave1Data')

        wave1 = wave1Data.trialList
  Routine SI
    CodeComponent pick_and_show_estimate
      Code Type = Both
      Begin JS Routine:
        // only run if phase is 2
        if (practice_phase !== 2) {
            continueRoutine = false;
        }

        // do not run if participant was too late at first estimation
        if (tooLate === 1){
            continueRoutine = false;
            estimate1 = 100; // set random estimate so program doesnt crash
        }

        event.clearEvents();
        document.body.style.cursor='auto';


        // retrieve confidence level to use in this trial, based on current nTotal and ratio
        if (startGame === 0) {
            if (trial_index === 0) {
                confidence_level = 1;
            } else if (trial_index === 1) {
                confidence_level = 2;
            } else {
                confidence_level = 3;
            }
            filtered_SI = wave1.filter(trial => trial['true_ratio']===true_ratio && trial['confidence']===confidence_level);
        } else {
            if (filler_trial === 0) {
                var confidence_index = nTotal_ratio_confidence.findIndex(
                    element => element.nTotal === nTotal && element.ratio === true_ratio
                );
                confidence_level = nTotal_ratio_confidence[confidence_index]["confidence"];
                // remove that index from dataframe, so it won't be used next time
                nTotal_ratio_confidence.splice(confidence_index, 1); // remove 1 element starting at pos i
                // filter wave1 data / social information based on current ratio and confidence level of peer to use
                filtered_SI = wave1.filter(trial => trial['true_ratio']===true_ratio && trial['confidence']===confidence_level);
            } else if (filler_trial === 1) {
                // filter wave1 data / social information based on current ratio only
                filtered_SI = wave1.filter(trial => trial['true_ratio']===true_ratio);
                if (true_ratio === 0 || true_ratio === 1){
                    confidence_level = 3; // makes more sense if peer is very confident in those obvious trials
                    filtered_SI = wave1.filter(trial => trial['true_ratio']===true_ratio && trial['confidence']===confidence_level);
                }
            }
        }



        // pick SI for which estimate is 15-18 percentage points in direction of true ratio.
        delta = Number.parseInt((estimate1 - (true_ratio * 100)));
        if (filler_trial === 1) {  // pick a peer estimate that is either super close or super far, in any direction
            close_far = SI_fillers[0]; // pick first element of shuffled list
            if (true_ratio === 0 || true_ratio === 1){
                close_far = 3; // otherwise not very believable
            }
            if (close_far === 3) {
                filtered_SI2 = filtered_SI.filter((trial) =>
                (trial['estimate'] > estimate1 - 3) && (trial['estimate'] < estimate1 + 3)
                );
                if (filtered_SI2.length === 0) {
                    close_far = 40;
                }
            }
            if (close_far === 40) {
                filtered_SI2 = filtered_SI.filter((trial) =>
                (trial['estimate'] > estimate1 + 40) || (trial['estimate'] < estimate1 - 40)
                );
                confidence_level = 1; // if difference between participant and peer is very large, it makes more sense to set peer confidence to 1.
            }
            filler_index = SI_fillers.findIndex(element => element === close_far);
            SI_fillers.splice(filler_index, 1); // remove used element from list
        } else if (delta > 0) {
            if (estimate1 < 15) {
                filtered_SI2 = filtered_SI.filter((trial) => trial['estimate'] === 0);
            } else {
                filtered_SI2 = filtered_SI.filter((trial) =>
                (trial['estimate'] > estimate1 - 19) && (trial['estimate'] < estimate1 - 14)
                );
            }
        } else if (delta < 0) {
            if (estimate1 > 85) {
                filtered_SI2 = filtered_SI.filter((trial) => trial['estimate'] === 100);
            } else {
                filtered_SI2 = filtered_SI.filter((trial) =>
                (trial['estimate'] > estimate1 + 14) && (trial['estimate'] < estimate1 + 19)
                );
            }
        } else if (delta === 0) { // any direction
            filtered_SI2 = filtered_SI.filter((trial) =>
            ((trial['estimate'] > estimate1 - 19) && (trial['estimate'] < estimate1 - 14)) ||
            ((trial['estimate'] > estimate1 + 14) && (trial['estimate'] < estimate1 + 19))
            );
        }

        // if no suitable SI could be found, just include all SI
        if (filtered_SI2.length === 0) {
            filtered_SI2 = filtered_SI;
        }


        // now randomly choose a peer estimate from filtered list
        random_index = Math.floor(Math.random() * filtered_SI2.length);
        peer_estimate = filtered_SI2[random_index]['estimate'];
        if (typeof(confidence_level) === "undefined") {
            confidence_level = filtered_SI2[random_index]['confidence'];
        }


        // define image to show about peers estimate
        if (confidence_level === 1) {
            peers_confidence_image = "low_peerConfidence.png";
        } else if (confidence_level === 2) {
            peers_confidence_image = "medium_peerConfidence.png";
        } else if (confidence_level === 3) {
            peers_confidence_image = "high_peerConfidence.png";
        }


        // parameters for peer estimate bar
        markerPos_peer = peer_estimate;
        markerPosition_peer = (markerPos_peer - 50) / 200; // in height units
        blueRectangle_peer_pos = ((- 0.25) + ((markerPos_peer / 200) / 2));
        blueRectangle_peer_size = markerPos_peer / 200;
        show_estimate_peer_text = Number.parseInt(markerPosition_peer*200+50);
      Begin Routine:
        # filter the list of objects based on trial characteristics
        #cond0 = [trial for trial in wave1 if trial['true_ratio'] == true_ratio]

        # only run if phase is 2
        if practice_phase is not 2:
            continueRoutine = False

        # do not run if participant was too late at first estimation
        if tooLate == 1:
            continueRoutine = False

        event.clearEvents()

        markerPos_peer = peer_estimate
        markerPosition_peer = (markerPos_peer - 50) / 200
        blueRectangle_peer_pos = -0.25 + markerPos_peer/200/2
        blueRectangle_peer_size = markerPos_peer/200
        show_estimate_peer_text = int(markerPos_peer)
    CodeComponent when_to_continue_2
      Code Type = Both
      Begin JS Routine:
        // do not run if participant was too late at first estimation
        if (tooLate === 1){
            continueRoutine = false;
        }

        event.clearEvents();
        document.body.style.cursor='auto';


        //estimation_slider_2.markerPos = estimation_slider_1.getRating(); // in slider units
        markerPos_2 = estimate1;
        markerPosition_2 = (markerPos_2 - 50) / 200; // in height units
        blueRectangle_2_pos = ((- 0.25) + ((markerPos_2 / 200) / 2));
        blueRectangle_2_size = markerPos_2 / 200;
        show_estimate1_text = Number.parseInt(markerPosition_2*200+50);


        //estimation_slider_2._opacity = 0;
        sliderfont = "Helvetica";

        //your_estimate1_text = ("Your part A decision was " + markerPos_2);


        //textbox parameters
        estimate2_textbox._multiline = false;
        estimate2_textbox._needPixiUpdate = true; // autofocus
        estimate2_textbox._needUpdate = true; // autofocus at repeat
      Begin Routine:
        # do not run if participant was too late at first estimation
        if tooLate == 1:
            continueRoutine = False


        event.clearEvents()

        #estimation_slider_2.markerPos = estimation_slider_1.getRating()
        markerPos_2 = estimate1
        markerPosition_2 = (markerPos_2 - 50) / 200
        blueRectangle_2_pos = -0.25 + markerPos_2/200/2
        blueRectangle_2_size = markerPos_2/200
        show_estimate1_text = int(markerPos_2)


        #slider_opacity = 0
        sliderfont = "Open Sans"

        #your_estimate1_text = "Your part A decision was " + markerPos_2


        invalid_input = ""
        pressENTER = ""
      Each Frame:
        keys = event.getKeys()

        # need to manually check for escape, as our key checking will interfere with
        # Builder's escape check:
        if 'escape' in keys:
            core.quit()

        # check if participant is too late
        if t > 12:
            if startGame==1:
                n_tooLate = n_tooLate + 1
            tooLate = 1
            continueRoutine = False


        # important: type a single space in the textbox field, otherwise it gives an error.
        # check if estimate is within 1-100
        invalid = False
        invalid_input = ""
        if len(estimate2_textbox.text) > 0 and estimate2_textbox.text != " ":
            try:
                int(estimate2_textbox.text)
            except ValueError:
                invalid = True
                invalid_input = "*invalid input\n(needs to be numerical with range 18-45)"
            if invalid == False:
                if int(estimate2_textbox.text) < 0 or int(estimate2_textbox.text) > 100:
                    invalid = True
                    invalid_input = "*invalid input\n(needs to be numerical with range 1-100)"

        # check if rating has been completed:
        pressENTER = ""
        if len(estimate2_textbox.text) > 0 and estimate2_textbox.text != " " and invalid == False:
            pressENTER = "Press ENTER to submit your decision"
            if ('return' in keys or 'num_enter' in keys):
                estimate2 = int(estimate2_textbox.text)
                estimate2_rt = t-2
                continueRoutine = False # end now



        # WHEN ACTUAL SLIDER
        # move slider colors along with response
        #if estimation_slider_2.markerPos is not None:
        #     markerPos_2 = estimation_slider_2.markerPos
        #     markerPosition_2 = (markerPos_2 - 50) / 200
        #     show_estimate_2_text = int(markerPos_2)
        #     blueRectangle_2_pos = -0.25 + markerPos_2/200/2
        #     blueRectangle_2_size = markerPos_2/200



        # check if rating has been completed:
        #rating_completed = 0
        #if estimation_slider_2.getRating() is not None:
        #    rating_completed = 1


        #if ('return' in keys or 'num_enter' in keys) and rating_completed == 1:
        #    continueRoutine = False # end now
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();

        // check if participant is too late
        if (t > 12){
            if (startGame===1){
                n_tooLate = n_tooLate + 1;
            }
            tooLate = 1;
            continueRoutine = false;
        }


        // check if estimate is within 1-100
        invalid = false;
        invalid_input = "";
        if (((estimate2_textbox.text.length > 0) && (estimate2_textbox.text !== " "))) {
            if ((isNaN(Number.parseInt(estimate2_textbox.text)))) {
                invalid = true;
                invalid_input = "*invalid input\n(needs to be numerical with range 1-100)";
            }
            if ((invalid === false)) {
                if (((Number.parseInt(estimate2_textbox.text) < 0) || (Number.parseInt(estimate2_textbox.text) > 100))) {
                    invalid = true;
                    invalid_input = "*invalid input\n(needs to be numerical with range 1-100)";
                }
            }
        }


        // check if rating has been completed:
        pressENTER = "";
        if ((((estimate2_textbox.text.length > 0) && (estimate2_textbox.text !== " ")) && (invalid === false))) {
            pressENTER = "Press ENTER to submit your decision";
            if (_pj.in_es6("return", keys) || _pj.in_es6("num_enter", keys)){
                estimate2 = Number.parseInt(estimate2_textbox.text);
                estimate2_rt = t-2;
                continueRoutine = false;
            }
        }



        // WHEN ACTUAL SLIDER
        //if ((estimation_slider_2.markerPos !== undefined)) {
        //    markerPos_2 = estimation_slider_2.markerPos;
        //    markerPosition_2 = (markerPos_2 - 50) / 200;
        //    blueRectangle_2_pos = ((- 0.25) + ((markerPos_2 / 200) / 2));
        //    blueRectangle_2_size = markerPos_2 / 200;
        //    show_estimate_2_text = Number.parseInt(markerPosition_2*200+50);
        //}


        //rating_completed = 0;
        //if ((estimation_slider_2.getRating() !== undefined)) {
        //    rating_completed = 1;
        //}

        //if (((_pj.in_es6("return", keys) || _pj.in_es6("num_enter", keys)) && (rating_completed === 1))) {
        //    continueRoutine = false;
        //}
      End JS Routine:
        if (tooLate === 0){
            deviance = estimate2 - true_ratio * 100;
            abs_deviance = Math.abs(deviance);
        }

        if ((startGame === 1)) {
            if (tooLate === 0){
                list_deviance.push(abs_deviance);
                psychoJS.experiment.addData("estimation2.rating", estimate2);
                psychoJS.experiment.addData("estimation2.rt", estimate2_rt); // slider appears after 2 secs
                psychoJS.experiment.addData("estimate_peer", peer_estimate);
                psychoJS.experiment.addData("confidence_peer", confidence_level);
            }
            // nRemaining is nRemaining across all, so nRemaining===0 is the very very last trial.
            if ((trials_parameters._snapshots[trial_index]["nRemaining"] === 0)) {
                sample_deviance = list_deviance[Math.floor(Math.random() * list_deviance.length)];
                bonus = (1.5 - (sample_deviance * 0.04));
                if ((bonus < 0)) {
                    bonus = 0;
                }
                expInfo["bonus"] = bonus;
            }
        }

        trial_index = trial_index + 1
      End Routine:
        #win.getMovieFrame()
        #win.saveMovieFrames('response.png')

        # performance
        if tooLate == 0:
            deviance = estimate2 - true_ratio*100
            abs_deviance = abs(deviance)

        # only save data during actual task, not practice
        if startGame == 1:
            if tooLate == 0:
                list_deviance.append(abs_deviance)
                loop_trials.addData('estimation2.rating', estimate2)
                loop_trials.addData('estimation2.rt', estimate2_rt-2)
                loop_trials.addData('estimate_peer', peer_estimate)
                loop_trials.addData('confidence_peer', confidence_level)
            if loop_trials.nRemaining == 0:
                list_deviance = np.array(list_deviance)
                sample_deviance = sample(list(list_deviance),1)[0]
                bonus = 1.50 - sample_deviance*0.04
                if bonus < 0:
                    bonus = 0 # never lower than
                expInfo['bonus'] = bonus

        trial_index = trial_index + 1
    TextComponent how_many_mushrooms_2
      font = $sliderfont
      letterHeight = 0.032
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.8
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      text:
        Based on the sample you just saw, how many out of 100 mushroom pickers should carry a BLUE bag today?
    ImageComponent peer_confidence_rating
      image [set every repeat] = $peers_confidence_image
      pos = (-0.28, 0.15)
      saveStartStop = False
      size = (0.3, 0.23)
      startVal [time (s)] = 0.0
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    TextComponent peers_estimate
      font = $sliderfont
      letterHeight = 0.025
      pos = (0.18, 0.2375)
      saveStartStop = False
      startVal [time (s)] = 2
      text = Other's decision:
      wrapWidth = 0.8
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    PolygonComponent blue_box_peer
      fillColor = blue
      lineColor = blue
      pos [set every repeat] = [markerPosition_peer+0.18, 0.2]
      saveStartStop = False
      shape = rectangle
      size = [0.06, 0.04]
      startVal [time (s)] = 2
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    TextComponent showEstimate_peer
      font [set every repeat] = $sliderfont
      letterHeight = 0.035
      pos [set every repeat] = [markerPosition_peer+0.18, 0.2]
      saveStartStop = False
      startVal [time (s)] = 2
      text [set every repeat] = $show_estimate_peer_text
      units = height
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    PolygonComponent red_rectangle_peer
      fillColor = red
      lineWidth = 0.5
      pos = (0.18, 0.15)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.04)
      startVal [time (s)] = 2
      units = height
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    PolygonComponent blue_rectangle_peer
      fillColor = blue
      lineWidth = 0.5
      pos [set every repeat] = [blueRectangle_peer_pos+0.18, 0.15]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [blueRectangle_peer_size, 0.04]
      startVal [time (s)] = 2
      units = height
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    PolygonComponent sliderMarker_peer
      fillColor = white
      pos [set every repeat] = [markerPosition_peer+0.18, 0.15]
      saveStartStop = False
      shape = rectangle
      size = (0.008, 0.05)
      startVal [time (s)] = 2
      units = height
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    TextComponent slider_text0_peer
      font [set every repeat] = $sliderfont
      letterHeight = 0.025
      pos = (-0.07, 0.11)
      saveStartStop = False
      startVal [time (s)] = 2
      text = 0
      units = height
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    TextComponent slider_text100_peer
      font [set every repeat] = $sliderfont
      letterHeight = 0.025
      pos = (0.43, 0.11)
      saveStartStop = False
      startVal [time (s)] = 2
      text = 100
      units = height
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    TextComponent your_estimate_1
      font = $sliderfont
      letterHeight = 0.025
      pos = (0.18, 0.0375)
      saveStartStop = False
      startVal [time (s)] = 2
      text = Your decision:
      wrapWidth = 0.8
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    PolygonComponent blue_box_2
      fillColor = blue
      lineColor = blue
      pos [set every repeat] = [markerPosition_2+0.18, 0]
      saveStartStop = False
      shape = rectangle
      size = [0.06, 0.04]
      startVal [time (s)] = 2
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    TextComponent showEstimate_2
      font [set every repeat] = $sliderfont
      letterHeight = 0.035
      pos [set every repeat] = [markerPosition_2+0.18, 0]
      saveStartStop = False
      startVal [time (s)] = 2
      text [set every repeat] = $show_estimate1_text
      units = height
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    SliderComponent estimation_slider_2
      borderColor = none
      color = White
      disabled = True
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = (0,100)
      letterHeight = 0.025
      opacity = 0
      pos = (0, -0.19)
      saveStartStop = False
      size = (0.5, 0.05)
      startVal [time (s)] = 2
      storeRating = False
      storeRatingTime = False
      styles = slider
      ticks = (0,100)
      units = height
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    PolygonComponent red_rectangle_2
      fillColor = red
      lineWidth = 0.5
      pos = (0.18, -0.05)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.04)
      startVal [time (s)] = 2
      units = height
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    PolygonComponent blue_rectangle_2
      fillColor = blue
      lineWidth = 0.5
      pos [set every repeat] = [blueRectangle_2_pos+0.18, -0.05]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [blueRectangle_2_size, 0.04]
      startVal [time (s)] = 2
      units = height
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    PolygonComponent sliderMarker_2
      fillColor = white
      pos [set every repeat] = [markerPosition_2+0.18, -0.05]
      saveStartStop = False
      shape = rectangle
      size = (0.008, 0.05)
      startVal [time (s)] = 2
      units = height
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    TextComponent slider_text0_2
      font [set every repeat] = $sliderfont
      letterHeight = 0.025
      pos = (-0.07, -0.09)
      saveStartStop = False
      startVal [time (s)] = 2
      text = 0
      units = height
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    TextComponent slider_text100_2
      font [set every repeat] = $sliderfont
      letterHeight = 0.025
      pos = (0.43, -0.09)
      saveStartStop = False
      startVal [time (s)] = 2
      text = 100
      units = height
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    TextComponent your_estimate_2
      font = $sliderfont
      letterHeight = 0.025
      pos = (0, -0.16)
      saveStartStop = False
      startVal [time (s)] = 2
      text = Your second decision:
      wrapWidth = 0.8
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    TextboxComponent estimate2_textbox
      anchor = top-left
      autoLog = False
      bold = True
      color = Black
      editable = True
      fillColor = White
      font = $sliderfont
      letterHeight = 0.035
      padding = 0.005
      pos = (-0.035, -0.19)
      saveStartStop = False
      size = [0.07, 0.045]
      startVal [time (s)] = 2
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    TextComponent text_invalid_input_2
      color = red
      font = $sliderfont
      letterHeight = 0.015
      pos = (0, -0.26)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $invalid_input
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    TextComponent space_to_submit_estimation_2
      font = $sliderfont
      letterHeight = 0.025
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $pressENTER
      units = height
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
  Routine instr_questionnaire
    KeyboardComponent response_2
      allowedKeys =  'return', 'num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
      End Routine:
        #win.getMovieFrame()
        #name = "instrPractice_{age}.png".format(age = currentPr)
        #win.saveMovieFrames(name)
    TextComponent text_5
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        PERSONALITY QUESTIONNAIRE


        You will see a list with 12 personality traits.
        You are asked to select the traits that characterize you the most.

        After you have made your selection, you will receive further instructions.

        Please take your time to read through the personality traits carefully.


        Press ENTER to continue
  Routine personality_statements
    CodeComponent code_14
      Code Type = Both
      Begin Experiment:
        traits_round = 1
        chosen = []
      Begin JS Experiment:
        traits_round = 1;
        chosen = [];
      Begin JS Routine:
        statements_left.setAlignHoriz('left');
        statements_right.setAlignHoriz('left');

        checkboxes = [box_1, box_2, box_3, box_4, box_5, box_6, box_7, box_8, box_9, box_10, box_11, box_12];
        clicked = [];

        for (var box, _pj_c = 0, _pj_a = checkboxes, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            box = _pj_a[_pj_c];
            if (chosen.includes(box.name)) {
                box.setFillColor(new util.Color([-.1,-.1,-.1]));
                box.setLineColor(new util.Color([-.1,-.1,-.1]));
            } else {
                box.setFillColor(new util.Color([1,1,1]));
            }
        }

        bufferTime = 0.1;
        clickClock = new util.Clock();
        lastClickTime = 0;

        if (traits_round === 1) {
            header_text = "Please select the 2 personality traits that characterize you the most:";
        } else if (traits_round === 2) {
            header_text = "Please select the next 2 personality traits that characterize you the most:";
        } else if (traits_round === 3) {
            header_text = "Please select all other personality traits that apply to you:\n(There is no minimum or maximum number of traits to select)";
        }
      Begin Routine:
        # js:statements_left.setAlignHoriz('left')
        statements_left.alignText = 'left'
        statements_right.alignText = 'left'

        # prepare tickboxes
        checkboxes = [box_1, box_2, box_3, box_4, box_5, box_6, box_7, box_8, box_9, box_10, box_11, box_12]
        clicked = []

        for box in checkboxes:
            if box.name in chosen:
                box.fillColor = "grey"
                box.lineColor = "grey"
             else:
                box.fillColor = "white"

        # so the checkbox doesnt flicker.
        bufferTime=.1
        clickClock=core.Clock()
        lastClickTime = 0

        # prepare header / question
        if traits_round == 1:
            header_text = "Please select the 2 personality traits that characterize you the most:"
        elif traits_round == 2:
            header_text = "Please select the next 2 personality traits that characterize you the most:"
        elif traits_round == 3:
            header_text = "Please select all other personality traits that apply to you:\n(There is no minimum or maximum number of traits to select)"
      Each Frame:
        # record key presses
        keys = event.getKeys()

        # change color of tickboxes depending on clicks
        for box in checkboxes:
            if mouse_3.isPressedIn(box):
                thisClickTime = clickClock.getTime()
                if (thisClickTime - lastClickTime) > bufferTime:
                    if (box.name not in clicked and box.name not in chosen):
                        box.fillColor = "red"
                        clicked.append(box.name)
                    elif (box.name in clicked and box.name not in chosen):
                        box.fillColor = "white"
                        clicked.remove(box.name)
                lastClickTime = thisClickTime

        # check how many boxes are selected
        if traits_round < 3:
            selected_text = ""
            if len(clicked) > 2:
                selected_text = "**You have selected more than 2 traits**\nPlease deselect 1 trait"
            elif len(clicked) == 2:
                selected_text = "**Press ENTER to submit your selection**"
                if ('return' in keys or 'num_enter'in keys):
                    continueRoutine = False # end now
        elif traits_round == 3:
            selected_text = "**Press ENTER to submit your selection**"
            if ('return' in keys or 'num_enter'in keys):
                    continueRoutine = False # end now
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        for (var box, _pj_c = 0, _pj_a = checkboxes, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            box = _pj_a[_pj_c];
            if (mouse_3.isPressedIn(box)) {
                var thisClickTime = clickClock.getTime();
                if (((thisClickTime - lastClickTime) > bufferTime)) {
                    if ((! _pj.in_es6(box.name, clicked)) && (! _pj.in_es6(box.name, chosen))) {
                        box.setFillColor(new util.Color([1,0,0]));
                        clicked.append(box.name);
                    } else {
                        if (_pj.in_es6(box.name, clicked) && (! _pj.in_es6(box.name, chosen))) {
                            box.setFillColor(new util.Color([1,1,1]));
                            clicked.splice(clicked.indexOf(box.name),1);
                        }
                    }
                }
                lastClickTime = thisClickTime;
            }
        }

        if (traits_round < 3) {
            selected_text = "";
            if ((clicked.length > 2)) {
                selected_text = "**You have selected more than 2 traits**\nPlease deselect 1 trait";
            } else {
                if ((clicked.length === 2)) {
                    selected_text = "**Press ENTER to submit your selection**";
                    if ((_pj.in_es6("return", keys) || _pj.in_es6("num_enter", keys))) {
                        continueRoutine = false;
                    }
                }
            }
        } else if (traits_round === 3) {
            selected_text = "**Press ENTER to submit your selection**";
            if ((_pj.in_es6("return", keys) || _pj.in_es6("num_enter", keys))) {
                continueRoutine = false;
            }
        }
      End JS Routine:
        traits_round = traits_round + 1;
        chosen.append(...clicked);
      End Routine:
        traits_round = traits_round + 1
        chosen.append(clicked)
    TextComponent header_statements
      letterHeight = 0.032
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $header_text
      units = height
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    TextComponent statements_left
      letterHeight = 0.026
      pos = (-0.27, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Active


        Organized


        Responsible


        Dependable


        Efficient


        Sympathetic
    MouseComponent mouse_3
      clickable = box_1, box_2, box_3, box_4, box_5, box_6, box_7, box_8, box_9, box_10, box_11, box_12
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent box_1
      fillColor = white
      pos = (-0.3, 0.215)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_2
      fillColor = white
      pos = (-0.3, 0.129)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_3
      fillColor = white
      pos = (-0.3, 0.043)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_4
      fillColor = white
      pos = (-0.3, -0.042)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_5
      fillColor = white
      pos = (-0.3, -0.128)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_6
      fillColor = white
      pos = (-0.3, -0.214)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent statements_right
      letterHeight = 0.026
      pos = (0.18, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Imaginative


        Kind


        Insightful


        Affectionate


        Curious


        Artistic
    PolygonComponent box_7
      fillColor = white
      pos = (0.15, 0.215)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_8
      fillColor = white
      pos = (0.15, 0.129)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_9
      fillColor = white
      pos = (0.15, 0.043)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_10
      fillColor = white
      pos = (0.15, -0.042)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_11
      fillColor = white
      pos = (0.15, -0.128)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box_12
      fillColor = white
      pos = (0.15, -0.214)
      saveStartStop = False
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent enter_3
      letterHeight = 0.0235
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $selected_text
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    CodeComponent saving_traits
      Code Type = Both
      Begin Experiment:
        iRound = 0
      Begin JS Experiment:
        iRound = 0;
      End JS Routine:
        if (iRound === 2) {
            chosen = chosen.join('_');
            trait_numbers = function () {
                var _pj_a = [], _pj_b = chosen.split("_");
                for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                    var s = _pj_b[_pj_c];
                    if (Number.isInteger(Number.parseInt(s))) {
                        _pj_a.push(Number.parseInt(s));
                    }
                }
                return _pj_a;
            }
            .call(this);
            trait_numbers = function () {
                var _pj_a = [], _pj_b = trait_numbers;
                for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                    var x = _pj_b[_pj_c];
                    _pj_a.push((x - 1));
                }
                return _pj_a;
            }
            .call(this);

            trait_list = ["Active", "Organized", "Responsible", "Dependable", "Efficient", "Sympathetic", "Imaginative", "Kind", "Insightful", "Affectionate", "Curious", "Artistic"];
            trait_1a = trait_list[trait_numbers[0]];
            trait_1b = trait_list[trait_numbers[1]];
            trait_2a = trait_list[trait_numbers[2]];
            trait_2b = trait_list[trait_numbers[3]];
            trait_rest = [];
            if (trait_numbers.length > 4) {
                for (var nTrait, _pj_c = 0, _pj_a = trait_numbers.slice(4), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    nTrait = _pj_a[_pj_c];
                    trait_rest.append(trait_list[nTrait]);
                }
            }

            traits1 = [trait_1a, trait_1b].join("  ");
            traits2 = [trait_2a, trait_2b].join("  ");
            traits3 = trait_rest.join("  ");

            // save traits
            expInfo["traits1"] = traits1;
            expInfo["traits2"] = traits2;
            expInfo["traits3"] = traits3;
        }

        iRound = iRound + 1;
      End Routine:
        if iRound == 2:
            chosen = '_'.join(chosen)
            trait_numbers = [int(s) for s in chosen.split("_") if s.isdigit()]
            trait_numbers = [x - 1 for x in trait_numbers]

            trait_list = [
                "Active",
                "Organized",
                "Responsible",
                "Dependable",
                "Efficient",
                "Sympathetic",
                "Imaginative",
                "Kind",
                "Insightful",
                "Affectionate",
                "Curious",
                "Artistic"]

            trait_1a = trait_list[trait_numbers[0]]
            trait_1b = trait_list[trait_numbers[1]]
            trait_2a = trait_list[trait_numbers[2]]
            trait_2b = trait_list[trait_numbers[3]]
            trait_rest = []
            if len(trait_numbers) > 4:
                for nTrait in trait_numbers[4:]:
                    trait_rest.append(trait_list[nTrait])

            traits1 = "  ".join([trait_1a, trait_1b])
            traits2 = "  ".join([trait_2a, trait_2b])
            traits3 = "  ".join(trait_rest)

            # save traits
            expInfo['traits1'] = traits1
            expInfo['traits2'] = traits2
            expInfo['traits3'] = traits3

        iRound = iRound + 1
  Routine feedback_traits
    CodeComponent code_15
      Code Type = Both
      Begin JS Routine:
        // give feedback
        fb1 = "According to your selection, the traits that characterize you the most are:\n\n\n\n";
        fb2 = "\n\n\n\n\n\n\nPress ENTER to continue.";
        newline = "\n";
        fb = ((((((fb1 + traits1) + newline) + traits2) + newline) + traits3) + fb2);
      Begin Routine:
        # give feedback
        fb1 = "According to your selection, the traits that characterize you the most are:\n\n\n\n"
        fb2 = "\n\n\n\n\n\n\nPress ENTER to continue."
        newline = "\n"
        fb = fb1 + traits1 + newline + traits2 + newline + traits3 + fb2
    TextComponent fb_text
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $fb
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    KeyboardComponent key_resp_4
      allowedKeys = 'return','num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instrPrac
    KeyboardComponent response
      allowedKeys = 'right', 'left', 'return', 'num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_5
      Code Type = Both
      Begin Experiment:
        Pr1 = ("MUSHROOM GAME:\n\n\nBefore we start the game, we will provide you with some instructions, "
        "followed by a few practice rounds.\n\n"
        "You can go back and forth through the instructions by pressing the LEFT and RIGHT arrow keys.\n\n\n"
        "Now press the RIGHT arrow key to move on to the next instruction.")

        Pr2 = ("In this game, you are part of a community for which the main food resource is mushrooms.\n\n"
        "These mushrooms are harvested from a forest in the vicinity of your village. "
        "Soon, it will be time to harvest, and the leader of the community has asked you for your help in coordinating this.\n\n"

        Pr3 = ("Each day, 100 people from the community will enter the forest.\n"
        "Each person will carry a bag to pick 1 type of mushroom.\n\n"
        "There are two types of mushrooms, blue and red ones.\n"
        "The problem is that these two types of mushrooms each need their own type of bag."
        "A blue mushroom can only be carried in a blue bag and a red mushroom can only be carried in a red bag.")

        Pr4 = ("Your task at the start of the day is to decide how many people will go into the forest carrying a blue bag and how many people will be carrying a red bag.\n\n"
        "If on one day there are 70 blue mushrooms and 30 red mushrooms in the forest, you need to give 70 people a blue bag and 30 people a red bag."
        "If you would give too many people a blue bag, some people carrying a blue bag would arrive home with an empty bag, "
        "while some red mushrooms would be left in the forest because there were not enough people with a red bag.\n"
        "That means your yield would not be optimal.")

        Pr5 = ("To make an informed guess about how many mushroom pickers should carry a blue or a red bag, "
        "you will get up early each morning to walk through 5 fields that surround your village.\n\n"
        "There are some blue and red mushrooms growing in these fields. "
        "You know that the mushrooms you see here are a good, but not exact representation of what will be found in the forest on that day.\n\n"
        "Thus, based on the number of blue versus red mushrooms in these 5 nearby fields, you can decide how many pickers you give a blue or a red bag.")

        Pr6 = ("On some days, you encounter many mushrooms in the fields, so you have a large sample to base your decision on."
        "On other days, however, you encounter fewer mushrooms, so you have less information to base your decision on.\n\n"
        "The more mushrooms you find in the nearby fields, the more precisely they represent the mushrooms in the forest.\n"
        "For example, if you find 10 blue and 40 red mushrooms in the field, you can be more certain of your decision than when you would have found 1 blue and 4 red mushrooms.")

        Pr7 = ("During the game, you will first see the mushrooms in each of the 5 fields.\n\n"
        "You are then asked to decide how many out of 100 pickers should carry a blue bag.\n\n"
        "Note that the number of pickers who should carry a blue bag is not necessarily the same as the number of blue mushrooms you found in the fields, because the number of mushrooms in the field is only a small sample.\n"
        "For example, if you found 2 blue and 18 red mushrooms in the field, the optimal number of pickers carrying a blue bag would probably be around 10 out of 100 pickers, not 2 out of 100.\n\n"
        "You will play multiple rounds. Each round represents a new day and all days together represent the entire harvest season.")

        Pr8 = ("You have 10 seconds to submit your decision, which is ample of time to think about your decision carefully. "
        "If you take longer than 10 seconds, you will get a warning message saying that you were too late. "
        "If that happens too often, the game will terminate automatically and you are asked to return your submission.\n\n"
        "To get a better understanding of the task and how everything looks, you will first play some practice days.\n\n"
        "Press ENTER to start the practice.")



        PrDict = { "1": Pr1,
                      "2": Pr2,
                      "3": Pr3,
                      "4": Pr4,
                      "5": Pr5,
                      "6": Pr6,
                      "7": Pr7,
                      "8": Pr8,
        }

        currentPr = "1"
      Begin JS Experiment:
        Pr1 = "MUSHROOM GAME\n\n\nBefore we start the game, we will provide you with some instructions, followed by a few practice rounds.\n\nYou can go back and forth through the instructions by pressing the LEFT and RIGHT arrow keys.\n\n\nNow press the RIGHT arrow key to move on to the next instruction."

        Pr2 = "In this game, you are part of a community for which the main food resource is mushrooms.\n\nThese mushrooms are harvested from a forest in the vicinity of your village. Soon, it will be time to harvest, and the leader of the community has asked you for your help in coordinating this."

        Pr3 = "Each day, 100 people from the community will enter the forest.\nEach person will carry a bag to pick 1 type of mushroom.\n\nThere are two types of mushrooms, blue and red ones.\nThe problem is that these two types of mushrooms each need their own type of bag. A blue mushroom can only be carried in a blue bag and a red mushroom can only be carried in a red bag."

        Pr4 = "Your task at the start of the day is to decide how many people will go into the forest carrying a blue bag and how many people will be carrying a red bag.\n\nIf on one day there are 70 blue mushrooms and 30 red mushrooms in the forest, you need to give 70 people a blue bag and 30 people a red bag. If you would give too many people a blue bag, some people carrying a blue bag would arrive home with an empty bag, while some red mushrooms would be left in the forest because there were not enough people with a red bag.\nThat means your yield would not be optimal."

        Pr5 = "To make an informed guess about how many mushroom pickers should carry a blue or a red bag, you will get up early each morning to walk through 5 fields that surround your village.\n\nThere are some blue and red mushrooms growing in these fields. You know that the mushrooms you see here are a good, but not exact representation of what will be found in the forest on that day.\n\nThus, based on the number of blue versus red mushrooms in these 5 nearby fields, you can decide how many pickers you give a blue or a red bag."

        Pr6 = "On some days, you encounter many mushrooms in the fields, so you have a large sample to base your decision on. On other days, however, you encounter fewer mushrooms, so you have less information to base your decision on.\n\nThe more mushrooms you find in the nearby fields, the more precisely they represent the mushrooms in the forest.\nFor example, if you find 10 blue and 40 red mushrooms in the field, you can be more certain of your decision than when you would have found 1 blue and 4 red mushrooms."

        Pr7 = "During the game, you will first see the mushrooms in each of the 5 fields.\n\nYou are then asked to decide how many out of 100 pickers should carry a blue bag.\n\nNote that the number of pickers who should carry a blue bag is not necessarily the same as the number of blue mushrooms you found in the fields, because the number of mushrooms in the field is only a small sample.\nFor example, if you found 2 blue and 18 red mushrooms in the field, the optimal number of pickers carrying a blue bag would probably be around 10 out of 100 pickers, not 2 out of 100.\n\nYou will play multiple rounds. Each round represents a new day and all days together represent the entire harvest season."

        Pr8 = "You have 10 seconds to submit your decision, which is ample of time to think about your decision carefully. If you take longer than 10 seconds, you will get a warning message saying that you were too late. If that happens too often, the game will terminate automatically and you are asked to return your submission.\n\nTo get a better understanding of the task and how everything looks, you will first play some practice days.\n\nPress ENTER to start the practice."

        PrDict = {"1": Pr1, "2": Pr2, "3": Pr3, "4": Pr4, "5": Pr5, "6": Pr6, "7": Pr7, "8": Pr8};
        currentPr = "1";
      Begin JS Routine:
        // only run if phase is 1
        if (practice_phase !== 1) {
            loop_instrPrac.finished = true;
            continueRoutine = false;
        }

        event.clearEvents();

        progress_bar_size = (((window_x * 2) / 18) * Number.parseInt(currentPr));
        progress_bar_pos = ((- window_x) + ((((window_x * 2) / 18) * Number.parseInt(currentPr)) / 2));
        progress_text = (("Instructions: " + currentPr) + "/18");
      Begin Routine:
        # only run if phase is 1
        if practice_phase is not 1:
            loop_instrPrac.finished = True
            continueRoutine = False

        event.clearEvents()

        progress_bar_size = (window_x*2)/18 * int(currentPr)
        progress_bar_pos = (-window_x) + (window_x*2)/18 * int(currentPr) / 2
        progress_text = "Instructions: " + currentPr + "/18"
      End JS Routine:
        if ((((response.keys === "return") || (response.keys === "num_enter")) && (Number.parseInt(currentPr) === 8))) {
            currentPr = (Number.parseInt(currentPr) + 1);
        } else {
            if (((response.keys === "right") && (Number.parseInt(currentPr) === 8))) {
                currentPr = Number.parseInt(currentPr);
            } else {
                if (((response.keys === "right") && (Number.parseInt(currentPr) !== 8))) {
                    currentPr = (Number.parseInt(currentPr) + 1);
                } else {
                    if ((response.keys === "left")) {
                        currentPr = (Number.parseInt(currentPr) - 1);
                    }
                }
            }
        }
        if ((currentPr === 0)) {
            currentPr = 1;
        } else {
            if ((currentPr === 9)) {
                loop_instrPrac.finished = true;
            }
        }
        currentPr = currentPr.toString();
        trial_index = 0;
      End Routine:
        #win.getMovieFrame()
        #name = "instrPractice_{age}.png".format(age = currentPr)
        #win.saveMovieFrames(name)

        if (response.keys == "return" or response.keys == "num_enter") and int(currentPr) == 8:
            currentPr = int(currentPr) + 1
        elif response.keys == "right" and int(currentPr) == 8:
            currentPr = int(currentPr)
        elif response.keys == "right" and int(currentPr) != 8:
            currentPr = int(currentPr) + 1
        elif response.keys == "left":
            currentPr = int(currentPr) - 1

        if currentPr == 0:
            currentPr = 1  # can't go lower than
        elif currentPr == 9:
            loop_instrPrac.finished=True

        currentPr = str(currentPr)

        trial_index = 0
    TextComponent text
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $PrDict[currentPr]
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    ImageComponent blue_mushroom
      flipHoriz = True
      image = blue_mushroom.png
      ori = 350
      pos [set every repeat] = (window_x-0.3, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent red_mushroom
      image = red_mushroom.png
      ori = 10
      pos [set every repeat] = (window_x-0.2, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent progress_bar_fixed_2
      fillColor = white
      pos [set every repeat] = (0, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_x*2, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent progress_bar_2
      fillColor = green
      lineColor = green
      pos [set every repeat] = (progress_bar_pos, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (progress_bar_size, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent progress_IC_2
      color = black
      letterHeight = 0.02
      pos = (0, 0.48)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        $progress_text
  Routine instrPrac2
    KeyboardComponent response_3
      allowedKeys = 'right', 'left', 'return', 'num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_16
      Code Type = Both
      Begin Experiment:
        Pr2_1 = ("After you have submitted your decision, you will see the decision made by another participant who has played this game earlier.\n\n"
        "The number of blue and red mushrooms in the forest was the same for this other person,\n"
        "but they were from a different village on the other side of the forest.\n"
        "That means that in the morning they had to sample from different fields on the other side of the forest, and the number of blue and red mushrooms in these fields might have been different from those in the fields surrounding your village.\n\n\n\n"
        "Press the RIGHT arrow key to continue")

        Pr2_2 = ("For example, you might have found 5 mushrooms in the fields, while the other participant found 50 mushrooms and thus had more information to base their decision on.\n"
        "Alternatively, the other person might have found fewer mushrooms in the fields than you did and thus had less information to base their decision on.\n\n"
        "However, you do not know if the other participant found more or fewer mushrooms than you did.\n\n\n\n"
        "Press the RIGHT arrow key to continue")

        Pr2_3 = ("This person was also asked to rate how confident they were in their decision.\n"
        "This confidence rating will also be shown to you.\n\n\n"
        "You can adapt your own decision after having seen this information.\n\n\n\n\n"
        "Press the RIGHT arrow key to see what this looks like.")

        Pr2_4 = ("\n\n\n\n\n\n\n\nYou will first see how confident the other person was on that harvest day.\n"
        "Their confidence can either be LOW, MEDIUM or HIGH.\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n"
        "Press the RIGHT arrow key to continue")

        Pr2_5 = ("\n\n\n\n\n\nThis information will be followed by one bar showing the decision made by the other person and a second bar showing your own decision.\n\n"
        "You will then have the opportunity to adapt your decision based on this new information.\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n"
        "Press the RIGHT arrow key to continue")

        Pr2_6 = ("On each harvest day, you will see the information from a different participant.\n\n"
        "You will now play a few more practice days.\n\n"
        "Please remember that you have 10 seconds to submit your decision.\n\n"
        "Press ENTER to start the practice.")



        Pr2Dict = { "1": Pr2_1,
                      "2": Pr2_2,
                      "3": Pr2_3,
                      "4": Pr2_4,
                      "5": Pr2_5
                      "6": Pr2_6
        }

        currentPr2 = "1"
      Begin JS Experiment:
        Pr2_1 = "After you have submitted your decision, you will see the decision made by another participant who has played this game earlier.\n\nThe number of blue and red mushrooms in the forest was the same for this other person,\nbut they were from a different village on the other side of the forest.\nThat means that in the morning they had to sample from different fields on the other side of the forest, and the number of blue and red mushrooms in these fields might have been different from those in the fields surrounding your village.\n\n\n\nPress the RIGHT arrow key to continue"

        Pr2_2 = "For example, you might have found 5 mushrooms in the fields, while the other participant found 50 mushrooms and thus had more information to base their decision on.\nAlternatively, the other person might have found fewer mushrooms in the fields than you did and thus had less information to base their decision on.\n\nHowever, you do not know if the other participant found more or fewer mushrooms than you did.\n\n\n\nPress the RIGHT arrow key to continue"

        Pr2_3 = "This person was also asked to rate how confident they were in their decision.\nThis confidence rating will also be shown to you.\n\n\nYou can adapt your own decision after having seen this information.\n\n\n\n\nPress the RIGHT arrow key to see what this looks like."

        Pr2_4 = "\n\n\n\n\n\n\n\nYou will first see how confident the other person was on that harvest day.\nTheir confidence can either be LOW, MEDIUM or HIGH.\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\nPress the RIGHT arrow key to continue"

        Pr2_5 = "\n\n\n\n\n\nThis information will be followed by one bar showing the decision made by the other person and a second bar showing your own decision.\n\nYou will then have the opportunity to adapt your decision based on this new information.\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\nPress the RIGHT arrow key to continue"

        Pr2_6 = "On each harvest day, you will see the information from a different participant.\n\nPlease remember that you have 10 seconds to submit your decision.\n\nYou will now play a few more practice days.\n\nPress ENTER to start the practice."

        Pr2Dict = {"1": Pr2_1, "2": Pr2_2, "3": Pr2_3, "4": Pr2_4, "5": Pr2_5, "6": Pr2_6};
        currentPr2 = "1";
      Begin JS Routine:
        // only run if phase is 2
        if (practice_phase !== 2) {
            loop_instrPrac2.finished = true;
            continueRoutine = false;
        }

        event.clearEvents();

        progress_bar_size = (window_x * 2 / 18) * (Number.parseInt(currentPr2) + 8);
        progress_bar_pos = (- window_x) + (window_x * 2 / 18) * (Number.parseInt(currentPr2) + 8) / 2;
        progress_text = (("Instructions: " + (Number.parseInt(currentPr2)+8).toString()) + "/18");
      Begin Routine:
        # only run if phase is 2
        if practice_phase is not 2:
            loop_instrPrac2.finished = True
            continueRoutine = False

        event.clearEvents()

        progress_bar_size = (window_x*2)/18 * (int(currentPr2) + 8)
        progress_bar_pos = (-window_x) + (window_x*2)/18 * (int(currentPr2) + 8) / 2
        progress_text = "Instructions: " + str(int(currentPr2)+8) + "/18"
      End JS Routine:
        if ((((response_3.keys === "return") || (response_3.keys === "num_enter")) && (Number.parseInt(currentPr2) === 6))) {
            currentPr2 = (Number.parseInt(currentPr2) + 1);
        } else {
            if (((response_3.keys === "right") && (Number.parseInt(currentPr2) === 6))) {
                currentPr2 = Number.parseInt(currentPr2);
            } else {
                if (((response_3.keys === "right") && (Number.parseInt(currentPr2) !== 6))) {
                    currentPr2 = (Number.parseInt(currentPr2) + 1);
                } else {
                    if ((response_3.keys === "left")) {
                        currentPr2 = (Number.parseInt(currentPr2) - 1);
                    }
                }
            }
        }
        if ((currentPr2 === 0)) {
            currentPr2 = 1;
        } else {
            if ((currentPr2 === 7)) {
                loop_instrPrac2.finished = true;
            }
        }
        currentPr2 = currentPr2.toString();
        trial_index = 0;
      End Routine:
        #win.getMovieFrame()
        #name = "instrPractice_{age}.png".format(age = currentPr)
        #win.saveMovieFrames(name)

        if (response_3.keys == "return" or response_3.keys == "num_enter") and int(currentPr2) == 6:
            currentPr2 = int(currentPr2) + 1
        elif response_3.keys == "right" and int(currentPr2) == 6:
            currentPr2 = int(currentPr2)
        elif response_3.keys == "right" and int(currentPr2) != 6:
            currentPr2 = int(currentPr2) + 1
        elif response_3.keys == "left":
            currentPr2 = int(currentPr2) - 1

        if currentPr2 == 0:
            currentPr2 = 1  # can't go lower than
        elif currentPr2 == 7:
            loop_instrPrac2.finished=True

        currentPr2 = str(currentPr2)

        trial_index = 0
    TextComponent text_7
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Pr2Dict[currentPr2]
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    ImageComponent blue_mushroom_6
      flipHoriz = True
      image = blue_mushroom.png
      ori = 350
      pos [set every repeat] = (window_x-0.3, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent red_mushroom_6
      image = red_mushroom.png
      ori = 10
      pos [set every repeat] = (window_x-0.2, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent progress_bar_fixed_5
      fillColor = white
      pos [set every repeat] = (0, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_x*2, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent progress_bar_5
      fillColor = green
      lineColor = green
      pos [set every repeat] = (progress_bar_pos, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (progress_bar_size, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent progress_IC_5
      color = black
      letterHeight = 0.02
      pos = (0, 0.48)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        $progress_text
    ImageComponent screenshot1
      image = screenshot_SI1.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.6, 0.34)
      startVal [condition] = currentPr2 == 4
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    ImageComponent screenshot2
      image = screenshot_SI2.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.6, 0.34)
      startVal [condition] = currentPr2 == 5
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  Routine set_practicePhase
    CodeComponent set_phase
      Code Type = Auto->JS
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      Begin Experiment:
        practice_phase = 0
        startGame = 0
      Begin Routine:
        practice_phase = practice_phase + 1
        startGame = 0
  Routine showBonus
    CodeComponent code_9
      Code Type = Both
      Begin JS Routine:
        if (n_tooLate >= 5){
            continueRoutine = false;
            end_text = " ";
        } else if (n_tooLate < 5) {
            var text1 = "Great job! You have finished the harvest season.\n\n";
            var text2 = "On the day that was selected by the computer, the number of mushroom pickers you sent into the forest carrying a BLUE bag deviated ";
            var text3 = sample_deviance.toFixed(0);
            var text4 = " bags from the correct answer.\nTherefore, your bonus will be \u00a31.50 - ";
            var text5 = " x \u00a30.04 =\n\n\u00a3";
            var text6 = bonus.toFixed(2);
            var text7 = " \n\nPress ENTER to continue.";
            end_text = (((((((text1 + text2) + text3) + text4) + text3) + text5) + text6) + text7);
        }
      Begin Routine:
        event.clearEvents()

        if n_tooLate >= 5:
            continueRoutine = False
            end_text = " "
        elif n_tooLate < 5:
            # sprintf function doesnt automatically translate from py to JS, so solved it this way
            text1 = "Great job! You have finished the harvest season.\n\n"
            text2 = "On the day that was selected by the computer, the number of mushroom pickers you sent into the forest carrying a BLUE bag deviated "
            text3 = format(sample_deviance, '.0f')
            text4 = " bags from the correct answer.\nTherefore, your bonus will be £1.50 - "
            text5 = " x £0.04 =\n\n£"
            text6 = format(bonus, '.2f')
            text7 = " \n\nPress ENTER to continue."
            end_text =  text1 + text2 + text3 + text4 + text3 + text5 + text6 + text7
      End Routine:
        #win.getMovieFrame()
        #win.saveMovieFrames('bonus.png')
    TextComponent bonus_text
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_text
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    KeyboardComponent enter_to_end
      allowedKeys = 'return', 'num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent blue_mushroom_4
      flipHoriz = True
      image = blue_mushroom.png
      ori = 350
      pos [set every repeat] = (window_x-0.3, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent red_mushroom_4
      image = red_mushroom.png
      ori = 10
      pos [set every repeat] = (window_x-0.2, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine instrBonus
    KeyboardComponent key_resp_2
      allowedKeys = 'right', 'left', 'return', 'num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_7
      Code Type = Both
      Begin Experiment:
        event.clearEvents()


        Instr1 = ("BONUS:\n\n"
        "At the end of the harvest season you will receive a bonus.\n"
        "The amount of this bonus depends on how well you did during the game, and is calculated as follows:\n\n"
        "The computer will randomly pick one of the harvest days and compare your decision that day to the correct answer. "
        "Their is an equal chance that the computer picks your first or your second decision, so both decisions are equally important.\n\n"
        "If your decision was exactly correct, you will receive a bonus of £1.50. For each blue bag off, we will deduct 4 pence.\n\n\n"
        "Press the RIGHT arrow key to continue.")

        Instr2 = ("For example, if you decided to give 70 out of the 100 pickers a blue bag, but there were 88 blue mushrooms in the forest, "
        "you will receive £1.50 - 18 x £0.04 = £0.78.\n\n"
        "Your bonus will never go below £0.00.\n\n"
        "This means that each and every day might determine your bonus at the end of the season.\n\n\n"
        "Press the RIGHT arrow key to continue.")

        Instr3 = ("As said before, the game will consist of multiple harvest days and all days together represent the harvest season. "
        "The entire season consists of 3 blocks. After each block, you can take a short break before continuing with the next block.\n\n"
        "Please remember that you have 10 seconds to submit each decision, which is ample of time to think about your decision carefully. "
        "If you take longer than 10 seconds, you will get a warning message saying that you were too late. "
        "If that happens too often, the game will terminate automatically and you are asked to return your submission.\n\n\n\n"
        "If everything is clear, you can press ENTER to start the game.")


        InstrDict = { "1": Instr1,
                      "2": Instr2,
                      "3": Instr3,
        }

        currentInstr = "1"
      Begin JS Experiment:
        event.clearEvents();


        Instr1 = "BONUS:\n\nAt the end of the harvest season you will receive a bonus.\nThe amount of this bonus depends on how well you did during the game, and is calculated as follows:\n\nThe computer will randomly pick one of the harvest days and compare your decision that day to the correct answer. Their is an equal chance that the computer picks your first or your second decision, so both decisions are equally important.\n\nIf your decision was exactly correct, you will receive a bonus of \u00a31.50. For each blue bag off, we will deduct 4 pence.\n\n\nPress the RIGHT arrow key to continue."

        Instr2 = "For example, if you decided to give 70 out of the 100 pickers a blue bag, but there were 88 blue mushrooms in the forest, you will receive \u00a31.50 - 18 x \u00a30.04 = \u00a30.78.\n\nYour bonus will never go below \u00a30.00.\n\nThis means that each and every day might determine your bonus at the end of the season.\n\n\nPress the RIGHT arrow key to continue."

        Instr3 = "As said before, the game will consist of multiple harvest days and all days together represent the harvest season. The entire season consists of 3 blocks. After each block, you can take a short break before continuing with the next block.\n\nPlease remember that you have 10 seconds to submit each decision, which is ample of time to think about your decision carefully. If you take longer than 10 seconds, you will get a warning message saying that you were too late. If that happens too often, the game will terminate automatically and you are asked to return your submission.\n\n\n\nIf everything is clear, you can press ENTER to start the game."
        InstrDict = {"1": Instr1, "2": Instr2, "3": Instr3};
        currentInstr = "1";
      Begin JS Routine:
        // only run if phase is 2
        if (practice_phase !== 2) {
            loop_instrBonus.finished = true;
            continueRoutine = false;
        }

        progress_bar_size = (((window_x * 2) / 18) * (Number.parseInt(currentInstr) + 15));
        progress_bar_pos = ((- window_x) + ((((window_x * 2) / 18) * (Number.parseInt(currentInstr) + 15)) / 2));
        progress_text = (("Instructions: " + (Number.parseInt(currentInstr)+15).toString()) + "/18");
      Begin Routine:
        # only run if phase is 2
        if practice_phase is not 2:
            loop_instrBonus.finished = True
            continueRoutine = False

        progress_bar_size = (window_x*2)/18 * (int(currentInstr) + 15)
        progress_bar_pos = (-window_x) + (window_x*2)/18 * (int(currentInstr) + 15) / 2
        progress_text = "Instructions: " + str(int(currentInstr)+15) + "/18"
      End JS Routine:
        if ((((key_resp_2.keys === "return") || (key_resp_2.keys === "num_enter")) && (Number.parseInt(currentInstr) === 3))) {
            currentInstr = (Number.parseInt(currentInstr) + 1);
        } else {
            if (((key_resp_2.keys === "right") && (Number.parseInt(currentInstr) === 3))) {
                currentInstr = Number.parseInt(currentInstr);
            } else {
                if (((key_resp_2.keys === "right") && (Number.parseInt(currentInstr) !== 3))) {
                    currentInstr = (Number.parseInt(currentInstr) + 1);
                } else {
                    if ((key_resp_2.keys === "left")) {
                        currentInstr = (Number.parseInt(currentInstr) - 1);
                    }
                }
            }
        }
        if ((currentInstr === 0)) {
            currentInstr = 1;
        } else {
            if ((currentInstr === 4)) {
                loop_instrBonus.finished = true;
            }
        }
        currentInstr = currentInstr.toString();
        list_deviance = [];
        trial_index = 0;
        startGame = 1;
      End Routine:
        #win.getMovieFrame()
        #name = "instructions_{age}.png".format(age = currentInstr)
        #win.saveMovieFrames(name)

        if (key_resp_2.keys == "return" or key_resp_2.keys == "num_enter") and int(currentInstr) == 3:
            currentInstr = int(currentInstr) + 1
        elif key_resp_2.keys == "right" and int(currentInstr) == 3:
            currentInstr = int(currentInstr)
        elif key_resp_2.keys == "right" and int(currentInstr) != 3:
            currentInstr = int(currentInstr) + 1
        elif key_resp_2.keys == "left":
            currentInstr = int(currentInstr) - 1

        if currentInstr == 0:
            currentInstr = 1  # can't go lower than
        elif currentInstr == 4:
            loop_instrBonus.finished=True

        currentInstr = str(currentInstr)

        list_deviance = []
        trial_index = 0
        startGame = 1
    TextComponent text_3
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $InstrDict[currentInstr]
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    ImageComponent blue_mushroom_2
      flipHoriz = True
      image = blue_mushroom.png
      ori = 350
      pos [set every repeat] = (window_x-0.3, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent red_mushroom_2
      image = red_mushroom.png
      ori = 10
      pos [set every repeat] = (window_x-0.2, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent progress_bar_fixed_3
      fillColor = white
      pos [set every repeat] = (0, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_x*2, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent progress_bar_3
      fillColor = green
      lineColor = green
      pos [set every repeat] = (progress_bar_pos, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (progress_bar_size, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent progress_IC_3
      color = black
      letterHeight = 0.02
      pos = (0, 0.48)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        $progress_text
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  Routine tooLate_feedback
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # only run if participant was too late
        if tooLate == 0:
            continueRoutine = False
      End Routine:
        # stop task if participant has been too late too often
        if startGame == 1:
            if n_tooLate >= 5:
                loop_trials.finished=True
    TextComponent tooLate_fb
      font = $sliderfont
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Too late!
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  Routine end_tooLate
    TextComponent tooLate_finish
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Thank you for your interest in the study.

        However, you have responded too late on too many trials.
        This screen therefore marks the end of the study and you will not receive your payment.

        Please return your submission.
        If you do not return your submission, the study will terminate automatically after 1 minute and your submission will be rejected.
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if n_tooLate < 5:
            continueRoutine = False
Flow
  Routine setup
  Routine import_wave1_data
  LoopInitiator loop_informedConsent loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 200
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    Routine informedConsent
  LoopTerminator loop_informedConsent
  Routine instr_questionnaire
  LoopInitiator rounds loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    Routine personality_statements
  LoopTerminator rounds
  Routine feedback_traits
  LoopInitiator practice_phases loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine set_practicePhase
    LoopInitiator loop_instrPrac loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 200
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      Routine instrPrac
    LoopTerminator loop_instrPrac
    LoopInitiator loop_instrPrac2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 200
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      Routine instrPrac2
    LoopTerminator loop_instrPrac2
    LoopInitiator loop_prTrials loopType="TrialHandler"
      Selected rows = $selected_practice_trials
      conditionsFile = trial_structure.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('nTotal', 5), ('trueRatio', 0.0), ('givenRatio', 0.0)]),
        OrderedDict([('nTotal', 5), ('trueRatio', 0.125), ('givenRatio', 0.125)]),
        OrderedDict([('nTotal', 5), ('trueRatio', 0.25), ('givenRatio', 0.25)]),
        OrderedDict([('nTotal', 5), ('trueRatio', 0.375), ('givenRatio', 0.375)]),
        OrderedDict([('nTotal', 5), ('trueRatio', 0.5), ('givenRatio', 0.5)]),
        OrderedDict([('nTotal', 5), ('trueRatio', 0.625), ('givenRatio', 0.625)]),
        OrderedDict([('nTotal', 5), ('trueRatio', 0.75), ('givenRatio', 0.75)]),
        OrderedDict([('nTotal', 5), ('trueRatio', 0.875), ('givenRatio', 0.875)]),
        OrderedDict([('nTotal', 5), ('trueRatio', 1.0), ('givenRatio', 1.0)]),
        OrderedDict([('nTotal', 25), ('trueRatio', 0.0), ('givenRatio', 0.0)]),
        OrderedDict([('nTotal', 25), ('trueRatio', 0.125), ('givenRatio', 0.125)]),
        OrderedDict([('nTotal', 25), ('trueRatio', 0.25), ('givenRatio', 0.25)]),
        OrderedDict([('nTotal', 25), ('trueRatio', 0.375), ('givenRatio', 0.375)]),
        OrderedDict([('nTotal', 25), ('trueRatio', 0.5), ('givenRatio', 0.5)]),
        OrderedDict([('nTotal', 25), ('trueRatio', 0.625), ('givenRatio', 0.625)]),
        OrderedDict([('nTotal', 25), ('trueRatio', 0.75), ('givenRatio', 0.75)]),
        OrderedDict([('nTotal', 25), ('trueRatio', 0.875), ('givenRatio', 0.875)]),
        OrderedDict([('nTotal', 25), ('trueRatio', 1.0), ('givenRatio', 1.0)]),
        OrderedDict([('nTotal', 45), ('trueRatio', 0.0), ('givenRatio', 0.0)]),
        OrderedDict([('nTotal', 45), ('trueRatio', 0.125), ('givenRatio', 0.125)])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
      Routine setupSamples
      Routine crossHair
      LoopInitiator loop_prSamples loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 5
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        Routine mushroomSample
        Routine ISI
      LoopTerminator loop_prSamples
      Routine firstEstimation
      Routine SI
      Routine tooLate_feedback
    LoopTerminator loop_prTrials
    Routine test_questions
    LoopInitiator loop_instrBonus loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 200
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      Routine instrBonus
    LoopTerminator loop_instrBonus
  LoopTerminator practice_phases
  LoopInitiator loop_trials loopType="TrialHandler"
    Selected rows = $selected_trials
    conditionsFile = trial_structure.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('nTotal', 5), ('trueRatio', 0.0), ('givenRatio', 0.0)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.125), ('givenRatio', 0.125)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.25), ('givenRatio', 0.25)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.375), ('givenRatio', 0.375)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.5), ('givenRatio', 0.5)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.625), ('givenRatio', 0.625)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.75), ('givenRatio', 0.75)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.875), ('givenRatio', 0.875)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 1.0), ('givenRatio', 1.0)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.0), ('givenRatio', 0.0)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.125), ('givenRatio', 0.125)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.25), ('givenRatio', 0.25)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.375), ('givenRatio', 0.375)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.5), ('givenRatio', 0.5)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.625), ('givenRatio', 0.625)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.75), ('givenRatio', 0.75)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 0.875), ('givenRatio', 0.875)]),
      OrderedDict([('nTotal', 25), ('trueRatio', 1.0), ('givenRatio', 1.0)]),
      OrderedDict([('nTotal', 45), ('trueRatio', 0.0), ('givenRatio', 0.0)]),
      OrderedDict([('nTotal', 45), ('trueRatio', 0.125), ('givenRatio', 0.125)])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
    Routine setupSamples
    Routine crossHair
    LoopInitiator loop_samples loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 5
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      Routine mushroomSample
      Routine ISI
    LoopTerminator loop_samples
    Routine firstEstimation
    Routine SI
    Routine tooLate_feedback
    Routine pause
  LoopTerminator loop_trials
  Routine end_tooLate
  Routine showBonus
  Routine comments
  Routine instrEnd
